# iaf_psc_alpha_adapt_curr - Leaky integrate-and-fire neuron model
# ################################################################
#
# Description
# +++++++++++
#
# This model augments iaf_psc_alpha with an adaptation current.
#
# iaf_psc_alpha is an implementation of a leaky integrate-and-fire model
# with alpha-function kernel synaptic currents. Thus, synaptic currents
# and the resulting post-synaptic potentials have a finite rise time.
#
# The threshold crossing is followed by an absolute refractory period
# during which the membrane potential is clamped to the resting potential.
#
# The general framework for the consistent formulation of systems with
# neuron like dynamics interacting by point events is described in
# [1]_. A flow chart can be found in [2]_.
#
# Critical tests for the formulation of the neuron model are the
# comparisons of simulation results for different computation step
# sizes.
#
# The iaf_psc_alpha is the standard model used to check the consistency
# of the nest simulation kernel because it is at the same time complex
# enough to exhibit non-trivial dynamics and simple enough compute
# relevant measures analytically.
#
# References
# ++++++++++
#
# .. [1] Rotter S, Diesmann M (1999). Exact simulation of
#        time-invariant linear systems with applications to neuronal
#        modeling. Biologial Cybernetics 81:381-402.
#        DOI: https://doi.org/10.1007/s004220050570
#
# .. [2] Diesmann M, Gewaltig M-O, Rotter S, & Aertsen A (2001). State
#        space analysis of synchronous spiking in cortical neural
#        networks. Neurocomputing 38-40:565-571.
#        DOI: https://doi.org/10.1016/S0925-2312(01)00409-X
#
# .. [3] Morrison A, Straube S, Plesser H E, Diesmann M (2006). Exact
#        subthreshold integration with continuous spike times in discrete time
#        neural network simulations. Neural Computation, in press
#        DOI: https://doi.org/10.1162/neco.2007.19.1.47
#
# See also
# ++++++++
#
# iaf_psc_delta, iaf_psc_exp, iaf_cond_alpha
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model iaf_psc_alpha_adapt_curr_neuron:

    state:
        V_m mV = E_L        # Membrane potential
        I_sfa pA = 0 pA     # Adaptation current
        refr_t ms = 0 ms    # Refractory period timer
        is_refractory boolean = false

    equations:
        kernel I_kernel_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel I_kernel_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)
        inline I pA = unit_psc * (convolve(I_kernel_exc, exc_spikes) - convolve(I_kernel_inh, inh_spikes)) - I_sfa + I_e + I_stim
        V_m' = -(V_m - E_L) / tau_m + I / C_m
        I_sfa' = -I_sfa / tau_sfa

    parameters:
        C_m pF = 250 pF           # Capacitance of the membrane
        tau_m ms = 10 ms          # Membrane time constant
        tau_syn_inh ms = 2 ms     # Time constant of synaptic current
        tau_syn_exc ms = 2 ms     # Time constant of synaptic current
        refr_T ms = 2 ms          # Duration of refractory period
        E_L mV = -70 mV           # Resting potential
        V_reset mV = -70 mV       # Reset potential of the membrane
        V_th mV = -55 mV          # Spike threshold

        tau_sfa ms = 100 ms       # Adaptation current time constant
        Delta_I_sfa pA = 100 pA   # Adaptation current increment upon spiking

        # constant external input current
        I_e pA = 0 pA

    internals:
        unit_psc pA = 1 pA        # Unitary postsynaptic current amplitude

    input:
        exc_spikes <- spike
        inh_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if is_refractory:
            # neuron is absolute refractory, do not evolve ODEs
            refr_t -= resolution()
        else:
            # neuron not refractory
            integrate_odes()

    onCondition(V_m >= V_th): # threshold crossing
        # A supra-threshold membrane potential should never be observable.
        # The reset at the time of threshold crossing enables accurate
        # integration independent of the computation step size, see [2,3] for
        # details.
        refr_t = refr_T    # start of the refractory period
        is_refractory = true
        V_m = V_reset
        I_sfa += Delta_I_sfa
        emit_spike()

    onCondition(is_refractory and refr_t <= resolution() / 2):
        # end of refractory period
        refr_t = 0 ms
        is_refractory = false
