# iaf_psc_alpha_adapt_thresh_OU - Leaky integrate-and-fire neuron model
# #####################################################################
#
# Description
# +++++++++++
#
# This model augments iaf_psc_alpha with an adaptive threshold and additive
# Ornstein-Uhlenbeck noise.
#
# iaf_psc_alpha is an implementation of a leaky integrate-and-fire model
# with alpha-function kernel synaptic currents. Thus, synaptic currents
# and the resulting post-synaptic potentials have a finite rise time.
#
# The threshold crossing is followed by an absolute refractory period
# during which the membrane potential is clamped to the resting potential.
#
# The general framework for the consistent formulation of systems with
# neuron like dynamics interacting by point events is described in
# [1]_. A flow chart can be found in [2]_.
#
# References
# ++++++++++
#
# .. [1] Rotter S, Diesmann M (1999). Exact simulation of
#        time-invariant linear systems with applications to neuronal
#        modeling. Biologial Cybernetics 81:381-402.
#        DOI: https://doi.org/10.1007/s004220050570
#
# .. [2] Diesmann M, Gewaltig M-O, Rotter S, & Aertsen A (2001). State
#        space analysis of synchronous spiking in cortical neural
#        networks. Neurocomputing 38-40:565-571.
#        DOI: https://doi.org/10.1016/S0925-2312(01)00409-X
#
# .. [3] Morrison A, Straube S, Plesser H E, Diesmann M (2006). Exact
#        subthreshold integration with continuous spike times in discrete time
#        neural network simulations. Neural Computation, in press
#        DOI: https://doi.org/10.1162/neco.2007.19.1.47
#
# See also
# ++++++++
#
# iaf_psc_delta, iaf_psc_exp, iaf_cond_alpha
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model iaf_psc_alpha_adapt_thresh_OU_neuron:

    state:
        V_m "voltage" = E_L             # Membrane potential
        Theta "voltage" = Theta_init    # Spiking threshold
        refr_t "time" = 0 ms         # Refractory period timer
        I_noise "current" = I_noise0    # Noise current

    equations:
        kernel I_kernel_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel I_kernel_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)
        inline I "current" = unit_psc * (convolve(I_kernel_exc, exc_spikes) - convolve(I_kernel_inh, inh_spikes)) + I_e + I_stim + I_noise
        V_m' = -(V_m - E_L) / tau_m + I / C_m
        Theta' = -(Theta - Theta_init) / tau_Theta
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero at a rate of one second per second

    parameters:
        C_m "capacitance" = 250 pF           # Capacitance of the membrane
        tau_m "time" = 10 ms          # Membrane time constant
        tau_syn_inh "time" = 2 ms     # Time constant of synaptic current
        tau_syn_exc "time" = 2 ms     # Time constant of synaptic current
        refr_T "time" = 2 ms          # Duration of refractory period
        E_L "voltage" = -70 mV           # Resting potential
        V_reset "voltage" = -70 mV       # Reset potential of the membrane

        Theta_init "voltage" = -55 mV    # Spike threshold potential
        tau_Theta "time" = 100 ms     # Spike threshold time constant
        Delta_Theta "voltage" = 2 mV     # Change in spike threshold upon spiking

        I_noise0 "current" = 0 pA        # mean of the noise current
        sigma_noise "current" = 0 pA     # std. dev. of the noise current

        # constant external input current
        I_e "current" = 0 pA

    internals:
        D_noise "current**2 / time" = 2 * sigma_noise**2 / tau_syn_exc
        A_noise "current" = ((D_noise * tau_syn_exc / 2) * (1 - exp(-2 * resolution() / tau_syn_exc)))**.5

        unit_psc "current" = 1 pA        # Unitary postsynaptic current amplitude

    input:
        exc_spikes <- spike
        inh_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        I_noise = I_noise0 + (I_noise - I_noise0) * exp(-resolution() / tau_syn_exc) + A_noise * random_normal(0, 1)

        if refr_t > 0 ms:
            # neuron is absolute refractory, do not evolve V_m
            integrate_odes(refr_t)
        else:
            # neuron not refractory
            integrate_odes(V_m, Theta)

    onCondition(refr_t <= 0 ms and V_m >= Theta): # threshold crossing
        refr_t = refr_T    # start of the refractory period
        V_m = V_reset
        Theta += Delta_Theta
        emit_spike()

