"""
Example compartmental model for NESTML

Description
+++++++++++
Corresponds to standard compartmental model implemented in NEST.

References
++++++++++


See also
++++++++


Author
++++++
Willem Wybo
"""
neuron cm_default:

  state:

    # the presence of the state variable [v_comp]
    # triggers compartment model context
    v_comp real = 0

    ### ion channels ###
    # initial values state variables sodium channel
    m_Na real = 0.0
    h_Na real = 0.0

    # initial values state variables potassium channel
    n_K real = 0.0

  end


  parameters:
    ### ion channels ###
    # default parameters sodium channel
    e_Na real = 50.0
    gbar_Na real = 0.0

    # default parameters potassium channel
    e_K real = -85.0
    gbar_K real = 0.0

    ### synapses ###
    e_AMPA real = 0 mV            # Excitatory reversal Potential
    tau_r_AMPA real = 0.2 ms      # Synaptic Time Constant Excitatory Synapse
    tau_d_AMPA real = 3.0 ms      # Synaptic Time Constant Excitatory Synapse

    e_GABA real = -80. mV            # Inhibitory reversal Potential
    tau_r_GABA real = 0.2 ms      # Synaptic Time Constant Inhibitory Synapse
    tau_d_GABA real = 10.0 ms      # Synaptic Time Constant Inhibitory Synapse

    e_NMDA real = 0 mV            # NMDA reversal Potential
    tau_r_NMDA real = 0.2 ms      # Synaptic Time Constant NMDA Synapse
    tau_d_NMDA real = 43.0 ms      # Synaptic Time Constant NMDA Synapse

    e_AN_AMPA real = 0 mV            # Excitatory reversal Potential
    tau_r_AN_AMPA real = 0.2 ms      # Synaptic Time Constant Excitatory Synapse
    tau_d_AN_AMPA real = 3.0 ms      # Synaptic Time Constant Excitatory Synapse
    e_AN_NMDA real = 0 mV            # NMDA reversal Potential
    tau_r_AN_NMDA real = 0.2 ms      # Synaptic Time Constant NMDA Synapse
    tau_d_AN_NMDA real = 43.0 ms     # Synaptic Time Constant NMDA Synapse
    NMDA_ratio real = 2.0      # NMDA_ratio
  end

  equations:
    """
    Here, we define the currents that are present in the model. Currents may,
    or may not depend on [v_comp]. Each variable in the equation for the currents
    must correspond either to a parameter (e.g. [gbar_Na], [e_Na], e_[NMDA], etc...)
    or to a state variable (e.g [m_Na], [n_K], [g_r_AMPA], etc...).

    When it is a parameter, it must be configurable from Python, by adding it as
    a key: value pair to the dictionary argument of `nest.AddCompartment` for an
    ion channel or of `nest.AddReceptor` for a synapse.

    State variables must reoccur in the initial values block and have an associated
    equation in the equations block.

    Internally, the model must compute the pair of values (g_val, i_val) for the
    integration algorithm. To do so, we need both the equation for current, and
    its voltage derivative

      i_X
      d(i_X)/dv

    Which we should be able to obtain from sympy trough symbolic differentiation.
    Then,

      g_val = d(i_X)/d(v_comp) / 2.
      i_val = i_X - d(i_X)/d(v_comp) / 2.

    """
    ### ion channels, recognized by lack of convolutions ###
    inline Na real = gbar_Na * m_Na**3 * h_Na**1 * (e_Na - v_comp)
    inline K real = gbar_K * n_K * (e_K - v_comp)

    ### synapses, characterized by convolution(s) with spike input ###
    kernel g_AMPA = g_norm_AMPA * ( - exp(-t / tau_r_AMPA) + exp(-t / tau_d_AMPA) )
    inline AMPA real = convolve(g_AMPA, spikes_AMPA) * (e_AMPA - v_comp)

    kernel g_GABA = g_norm_GABA * ( - exp(-t / tau_r_GABA) + exp(-t / tau_d_GABA) )
    inline GABA real = convolve(g_GABA, spikes_GABA) * (e_GABA - v_comp )

    kernel g_NMDA = g_norm_NMDA * ( - exp(-t / tau_r_NMDA) + exp(-t / tau_d_NMDA) )
    inline NMDA real = convolve(g_NMDA, spikes_NMDA) * (e_NMDA - v_comp ) / (1. + 0.3 * exp( -.1 * v_comp ))

    kernel g_AN_AMPA = g_norm_AN_AMPA * ( - exp(-t / tau_r_AN_AMPA) + exp(-t / tau_d_AN_AMPA) )
    kernel g_AN_NMDA = g_norm_AN_NMDA * ( - exp(-t / tau_r_AN_NMDA) + exp(-t / tau_d_AN_NMDA) )
    inline AMPA_NMDA real = convolve(g_AN_AMPA, spikes_AN) * (e_AN_AMPA - v_comp) + NMDA_ratio * \
                            convolve(g_AN_NMDA, spikes_AN) * (e_AN_NMDA - v_comp) / (1. + 0.3 * exp( -.1 * v_comp ))
  end

  # #sodium
  # function m_inf_Na(v_comp real) real:
  #   return (0.182*v_comp + 6.3723659999999995)/((1.0 - 0.020438532058318047*exp(-0.1111111111111111*v_comp))*((-0.124*v_comp - 4.3416119999999996)/(1.0 - 48.927192870146527*exp(0.1111111111111111*v_comp)) + (0.182*v_comp + 6.3723659999999995)/(1.0 - 0.020438532058318047*exp(-0.1111111111111111*v_comp))))
  # end

  # function tau_m_Na(v_comp real) real:
  #   return 0.3115264797507788/((-0.124*v_comp - 4.3416119999999996)/(1.0 - 48.927192870146527*exp(0.1111111111111111*v_comp)) + (0.182*v_comp + 6.3723659999999995)/(1.0 - 0.020438532058318047*exp(-0.1111111111111111*v_comp)))
  # end

  # function h_inf_Na(v_comp real) real:
  #   return 1.0/(exp(0.16129032258064516*v_comp + 10.483870967741936) + 1.0)
  # end

  # function tau_h_Na(v_comp real) real:
  #   return 0.3115264797507788/((-0.0091000000000000004*v_comp - 0.68261830000000012)/(1.0 - 3277527.8765015295*exp(0.20000000000000001*v_comp)) + (0.024*v_comp + 1.200312)/(1.0 - 4.5282043263959816e-5*exp(-0.20000000000000001*v_comp)))
  # end

  # #potassium
  # function n_inf_K(v_comp real) real:
  #   return 0.02*(v_comp - 25.0)/((1.0 - exp((25.0 - v_comp)/9.0))*((-0.002)*(v_comp - 25.0)/(1.0 - exp((v_comp - 25.0)/9.0)) + 0.02*(v_comp - 25.0)/(1.0 - exp((25.0 - v_comp)/9.0))))
  # end

  # function tau_n_K(v_comp real) real:
  #   return 0.3115264797507788/((-0.002)*(v_comp - 25.0)/(1.0 - exp((v_comp - 25.0)/9.0)) + 0.02*(v_comp - 25.0)/(1.0 - exp((25.0 - v_comp)/9.0)))
  # end

  # functions K
  function n_inf_K (v_comp real) real:
      return 0.02*(1.0 - exp(0.111111111111111*(25.0 - v_comp)))**(-1)*(-0.002*(-25.0 + v_comp)*(1.0 - exp(0.111111111111111*(-25.0 + v_comp)))**(-1) + 0.02*(-25.0 + v_comp)*(1.0 - exp(0.111111111111111*(25.0 - v_comp)))**(-1))**(-1)*(-25.0 + v_comp)
  end
  function tau_n_K (v_comp real) real:
      return 0.311526479750779*(-0.002*(-25.0 + v_comp)*(1.0 - exp(0.111111111111111*(-25.0 + v_comp)))**(-1) + 0.02*(-25.0 + v_comp)*(1.0 - exp(0.111111111111111*(25.0 - v_comp)))**(-1))**(-1)
  end

  # functions Na
  function m_inf_Na (v_comp real) real:
      return (1.0 - 0.020438532058318*exp(-0.111111111111111*v_comp))**(-1)*((1.0 - 0.020438532058318*exp(-0.111111111111111*v_comp))**(-1)*(6.372366 + 0.182*v_comp) + (1.0 - 48.9271928701465*exp(0.111111111111111*v_comp))**(-1)*(-4.341612 - 0.124*v_comp))**(-1)*(6.372366 + 0.182*v_comp)
  end
  function tau_m_Na (v_comp real) real:
      return 0.311526479750779*((1.0 - 0.020438532058318*exp(-0.111111111111111*v_comp))**(-1)*(6.372366 + 0.182*v_comp) + (1.0 - 48.9271928701465*exp(0.111111111111111*v_comp))**(-1)*(-4.341612 - 0.124*v_comp))**(-1)
  end
  function h_inf_Na (v_comp real) real:
      return 1.0*(1.0 + 35734.4671267926*exp(0.161290322580645*v_comp))**(-1)
  end
  function tau_h_Na (v_comp real) real:
      return 0.311526479750779*((1.0 - 4.52820432639598e-5*exp(-0.2*v_comp))**(-1)*(1.200312 + 0.024*v_comp) + (1.0 - 3277527.87650153*exp(0.2*v_comp))**(-1)*(-0.6826183 - 0.0091*v_comp))**(-1)
  end

  internals:
    tp_AMPA real = (tau_r_AMPA * tau_d_AMPA) / (tau_d_AMPA - tau_r_AMPA) * ln( tau_d_AMPA / tau_r_AMPA )
    g_norm_AMPA real =  1. / ( -exp( -tp_AMPA / tau_r_AMPA ) + exp( -tp_AMPA / tau_d_AMPA ) )

    tp_GABA real = (tau_r_GABA * tau_d_GABA) / (tau_d_GABA - tau_r_GABA) * ln( tau_d_GABA / tau_r_GABA )
    g_norm_GABA real =  1. / ( -exp( -tp_GABA / tau_r_GABA ) + exp( -tp_GABA / tau_d_GABA ) )

    tp_NMDA real = (tau_r_NMDA * tau_d_NMDA) / (tau_d_NMDA - tau_r_NMDA) * ln( tau_d_NMDA / tau_r_NMDA )
    g_norm_NMDA real =  1. / ( -exp( -tp_NMDA / tau_r_NMDA ) + exp( -tp_NMDA / tau_d_NMDA ) )

    tp_AN_AMPA real = (tau_r_AN_AMPA * tau_d_AN_AMPA) / (tau_d_AN_AMPA - tau_r_AN_AMPA) * ln( tau_d_AN_AMPA / tau_r_AN_AMPA )
    g_norm_AN_AMPA real =  1. / ( -exp( -tp_AN_AMPA / tau_r_AN_AMPA ) + exp( -tp_AN_AMPA / tau_d_AN_AMPA ) )

    tp_AN_NMDA real = (tau_r_AN_NMDA * tau_d_AN_NMDA) / (tau_d_AN_NMDA - tau_r_AN_NMDA) * ln( tau_d_AN_NMDA / tau_r_AN_NMDA )
    g_norm_AN_NMDA real =  1. / ( -exp( -tp_AN_NMDA / tau_r_AN_NMDA ) + exp( -tp_AN_NMDA / tau_d_AN_NMDA ) )
  end

  input:
    spikes_AMPA uS <- spike
    spikes_GABA uS <- spike
    spikes_NMDA uS <- spike
    spikes_AN uS <- spike
  end

  output: spike

  update:
  end

end