"""
Name: hh_cond_exp_traub - Hodgin Huxley based model, Traub modified.

Description:

 hh_cond_exp_traub is an implementation of a modified Hodkin-Huxley model

 (1) Post-synaptic currents
 Incoming spike events induce a post-synaptic change of conductance modeled
 by an exponential function. The exponential function is normalized such that an
 event of weight 1.0 results in a peak current of 1 nS.

 (2) Spike Detection
 Spike detection is done by a combined threshold-and-local-maximum search: if
 there is a local maximum above a certain threshold of the membrane potential,
 it is considered a spike.

Problems/Todo:
Only the channel variables m,h,n are implemented. The original
contains variables called y,s,r,q and \chi.
References:

Traub, R.D. and Miles, R. (1991) Neuronal Networks of the Hippocampus.
Cambridge University Press, Cambridge UK.

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent, DataLoggingRequest

Author: Schrader

SeeAlso: hh_psc_alpha
"""
neuron hh_cond_exp_traub:

  state:
    r integer # counts number of tick during the refractory period
  end

  initial_values:
    V_m mV = E_L #  Membrane potential

    function alpha_n_init 1/ms = 0.032/(ms* mV ) * ( 15. mV - V_m) / ( exp( ( 15. mV - V_m) / 5. mV ) - 1. )
    function beta_n_init 1/ms = 0.5 /ms * exp( ( 10. mV - V_m ) / 40. mV )
    function alpha_m_init 1/ms = 0.32/(ms* mV ) * ( 13. mV - V_m) / ( exp( ( 13. mV - V_m) / 4. mV ) - 1. )
    function beta_m_init 1/ms = 0.28/(ms* mV ) * ( V_m  - 40. mV ) / ( exp( ( V_m - 40. mV ) / 5. mV ) - 1. )
    function alpha_h_init 1/ms = 0.128/ms * exp( ( 17. mV - V_m) / 18. mV )
    function beta_h_init 1/ms = ( 4. / ( 1. + exp( ( 40. mV - V_m ) / 5. mV) ) ) / ms

    Act_m real =  alpha_m_init / ( alpha_m_init + beta_m_init )
    Act_h real = alpha_h_init / ( alpha_h_init + beta_h_init )
    Inact_n real =  alpha_n_init / ( alpha_n_init + beta_n_init )
  end

  equations:
    # synapses: exponential conductance
    shape g_in = exp(-1/tau_syn_in*t)
    shape g_ex = exp(-1/tau_syn_ex*t)

    # Add aliases to simplify the equation definition of V_m
    function I_Na  pA = g_Na * Act_m * Act_m * Act_m * Act_h * ( V_m - E_Na )
    function I_K   pA  = g_K * Inact_n * Inact_n * Inact_n * Inact_n * ( V_m - E_K )
    function I_L   pA = g_L * ( V_m - E_L )
    function I_syn_exc pA = convolve(g_ex, spikeExc) * ( V_m - E_ex )
    function I_syn_inh pA = convolve(g_in, spikeInh) * ( V_m - E_in )

    V_m' = ( -I_Na - I_K - I_L - I_syn_exc - I_syn_inh + I_e + I_stim ) / C_m

    # channel dynamics
    function V_rel mV = V_m - V_T
    function alpha_n 1/ms = 0.032/(ms* mV ) * ( 15. mV - V_rel) / ( exp( ( 15. mV - V_rel) / 5. mV ) - 1. )
    function beta_n 1/ms = 0.5 /ms * exp( ( 10. mV - V_rel ) / 40. mV )
    function alpha_m 1/ms = 0.32/(ms* mV ) * ( 13. mV - V_rel) / ( exp( ( 13. mV - V_rel) / 4. mV ) - 1. )
    function beta_m 1/ms = 0.28/(ms* mV ) * ( V_rel  - 40. mV ) / ( exp( ( V_rel - 40. mV ) / 5. mV ) - 1. )
    function alpha_h 1/ms = 0.128/ms * exp( ( 17. mV - V_rel) / 18. mV )
    function beta_h 1/ms = ( 4. / ( 1. + exp( ( 40. mV - V_rel ) / 5. mV) ) ) / ms

    Act_m' = ( alpha_m - ( alpha_m + beta_m ) * Act_m )
    Act_h' = ( alpha_h - ( alpha_h + beta_h ) * Act_h )
    Inact_n' = ( alpha_n - ( alpha_n + beta_n ) * Inact_n )
  end

  parameters:
    g_Na nS = 20000.0 nS       # Na Conductance
    g_K nS = 6000.0 nS         # K Conductance
    g_L nS = 10 nS             # Leak Conductance
    C_m pF = 200.0 pF          # Membrane Capacitance
    E_Na mV = 50 mV            # Reversal potentials
    E_K mV = -90. mV           # Potassium reversal potential
    E_L mV = -60. mV           # Leak reversal Potential (aka resting potential)
    V_T mV = -63.0 mV          # Voltage offset that controls dynamics. For default
                               # parameters, V_T = -63 mV results in a threshold around -50 mV.
    tau_syn_ex ms = 5.0 ms     # Synaptic Time Constant Excitatory Synapse
    tau_syn_in ms = 10.0 ms    # Synaptic Time Constant for Inhibitory Synapse
    E_ex mV = 0.0 mV           # Excitatory synaptic reversal potential
    E_in mV = -80.0 mV         # Inhibitory synaptic reversal potential

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = 20
  end

  input:
    spikeInh nS  <- inhibitory spike
    spikeExc nS  <- excitatory spike
    I_stim pA <- current
  end

  output: spike

  update:
    U_old mV = V_m
    integrate_odes()

    # sending spikes: crossing 0 mV, pseudo-refractoriness and local maximum...
    if r > 0:
      r -= 1
    elif V_m > V_T + 30 mV and U_old > V_m:
      r = RefractoryCounts
      emit_spike()
    end

  end

end

"""
Name: hh_cond_exp_traub_implicit - Hodgin Huxley based model, Traub modified.

Description:

 hh_cond_exp_traub_implicit is an implementation of a modified Hodkin-Huxley model

 (1) Post-synaptic currents
 Incoming spike events induce a post-synaptic change of conductance modeled
 by an exponential function. The exponential function is normalized such that an
 event of weight 1.0 results in a peak current of 1 nS.

 (2) Spike Detection
 Spike detection is done by a combined threshold-and-local-maximum search: if
 there is a local maximum above a certain threshold of the membrane potential,
 it is considered a spike.

Problems/Todo:
Only the channel variables m,h,n are implemented. The original
contains variables called y,s,r,q and \chi.
References:

Traub, R. D. and Miles, R. (1991) Neuronal Networks of the Hippocampus.
Cambridge University Press, Cambridge UK.

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent, DataLoggingRequest

Author: Schrader

SeeAlso: hh_psc_alpha
"""
neuron hh_cond_exp_traub_implicit:

  state:
    r integer # counts number of tick during the refractory period
  end

  initial_values:
    V_m mV = E_L #  Membrane potential

    g_in nS = 1 nS # Inhibitory synaptic conductance
    g_ex nS = 1 nS # Excitatory synaptic conductance

    function alpha_n_init 1/ms = 0.032/(ms* mV ) * ( 15. mV - V_m) / ( exp( ( 15. mV - V_m) / 5. mV ) - 1. )
    function beta_n_init 1/ms = 0.5 /ms * exp( ( 10. mV - V_m ) / 40. mV )
    function alpha_m_init 1/ms = 0.32/(ms* mV ) * ( 13. mV - V_m) / ( exp( ( 13. mV - V_m) / 4. mV ) - 1. )
    function beta_m_init 1/ms = 0.28/(ms* mV ) * ( V_m  - 40. mV ) / ( exp( ( V_m - 40. mV ) / 5. mV ) - 1. )
    function alpha_h_init 1/ms = 0.128/ms * exp( ( 17. mV - V_m) / 18. mV )
    function beta_h_init 1/ms = ( 4. / ( 1. + exp( ( 40. mV - V_m ) / 5. mV) ) ) / ms

    Act_m real =  alpha_m_init / ( alpha_m_init + beta_m_init )
    Act_h real = alpha_h_init / ( alpha_h_init + beta_h_init )
    Inact_n real =  alpha_n_init / ( alpha_n_init + beta_n_init )
  end

  equations:
    # synapses: exponential conductance
    shape g_ex' = -g_ex / tau_syn_ex
    shape g_in' = -g_in / tau_syn_in

    # Add aliases to simplify the equation definition of V_m
    function I_Na  pA = g_Na * Act_m * Act_m * Act_m * Act_h * ( V_m - E_Na )
    function I_K   pA  = g_K * Inact_n * Inact_n * Inact_n * Inact_n * ( V_m - E_K )
    function I_L   pA = g_L * ( V_m - E_L )
    function I_syn_exc pA = convolve(g_ex, spikeExc) * ( V_m - E_ex )
    function I_syn_inh pA = convolve(g_in, spikeInh) * ( V_m - E_in )

    V_m' = ( -I_Na - I_K - I_L - I_syn_exc - I_syn_inh + I_e + I_stim ) / C_m

    # channel dynamics
    function V_rel mV = V_m - V_T
    function alpha_n 1/ms = 0.032/(ms* mV ) * ( 15. mV - V_rel) / ( exp( ( 15. mV - V_rel) / 5. mV ) - 1. )
    function beta_n 1/ms = 0.5 /ms * exp( ( 10. mV - V_rel ) / 40. mV )
    function alpha_m 1/ms = 0.32/(ms* mV ) * ( 13. mV - V_rel) / ( exp( ( 13. mV - V_rel) / 4. mV ) - 1. )
    function beta_m 1/ms = 0.28/(ms* mV ) * ( V_rel  - 40. mV ) / ( exp( ( V_rel - 40. mV ) / 5. mV ) - 1. )
    function alpha_h 1/ms = 0.128/ms * exp( ( 17. mV - V_rel) / 18. mV )
    function beta_h 1/ms = ( 4. / ( 1. + exp( ( 40. mV - V_rel ) / 5. mV) ) ) / ms

    Act_m' = ( alpha_m - ( alpha_m + beta_m ) * Act_m )
    Act_h' = ( alpha_h - ( alpha_h + beta_h ) * Act_h )
    Inact_n' = ( alpha_n - ( alpha_n + beta_n ) * Inact_n )
  end

  parameters:
    g_Na nS = 20000.0 nS       # Na Conductance
    g_K nS = 6000.0 nS         # K Conductance
    g_L nS = 10 nS             # Leak Conductance
    C_m pF = 200.0 pF          # Membrane Capacitance
    E_Na mV = 50 mV            # Reversal potentials
    E_K mV = -90. mV           # Potassium reversal potential
    E_L mV = -60. mV           # Leak reversal Potential (aka resting potential)
    V_T mV = -63.0 mV          # Voltage offset that controls dynamics. For default
                               # parameters, V_T = -63 mV results in a threshold around -50 mV.
    tau_syn_ex ms = 5.0 ms     # Synaptic Time Constant Excitatory Synapse
    tau_syn_in ms = 10.0 ms    # Synaptic Time Constant for Inhibitory Synapse
    E_ex mV = 0.0 mV           # Excitatory synaptic reversal potential
    E_in mV = -80.0 mV         # Inhibitory synaptic reversal potential

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = 20
  end

  input:
    spikeInh nS  <- inhibitory spike
    spikeExc nS  <- excitatory spike
    I_stim pA <- current
  end

  output: spike

  update:
    U_old mV = V_m
    integrate_odes()

    # sending spikes: crossing 0 mV, pseudo-refractoriness and local maximum...
    if r > 0:
      r -= 1
    elif V_m > V_T + 30 mV and U_old > V_m:
      r = RefractoryCounts
      emit_spike()
    end
  end

end
