"""
aeif_cond_alpha - Conductance based exponential integrate-and-fire neuron model
###############################################################################

Description
+++++++++++

aeif_cond_alpha is the adaptive exponential integrate and fire neuron according to Brette and Gerstner (2005), with post-synaptic conductances in the form of a bi-exponential ("alpha") function.

The membrane potential is given by the following differential equation:

.. math::

   C_m \frac{dV_m}{dt} =
   -g_L(V_m-E_L)+g_L\Delta_T\exp\left(\frac{V_m-V_{th}}{\Delta_T}\right) -
 g_e(t)(V_m-E_e) \\
                                                     -g_i(t)(V_m-E_i)-w + I_e

and

.. math::

 \tau_w \frac{dw}{dt} = a(V_m-E_L) - w

Note that the membrane potential can diverge to positive infinity due to the exponential term. To avoid numerical instabilities, instead of :math:`V_m`, the value :math:`\min(V_m,V_{peak})` is used in the dynamical equations.


References
++++++++++

.. [1] Brette R and Gerstner W (2005). Adaptive exponential
       integrate-and-fire model as an effective description of neuronal
       activity. Journal of Neurophysiology. 943637-3642
       DOI: https://doi.org/10.1152/jn.00686.2005


See also
++++++++

iaf_cond_alpha, aeif_cond_exp
"""
neuron aeif_cond_alpha:

    state:
        V_m mV = E_L       # Membrane potential
        w pA = 0 pA        # Spike-adaptation current

    equations:
        inline V_bounded mV = min(V_m, V_peak) # prevent exponential divergence
        kernel g_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel g_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)

        # Add inlines to simplify the equation definition of V_m
        inline exp_arg real = (V_bounded - V_th) / Delta_T
        inline I_spike pA = g_L * Delta_T * exp(exp_arg)
        inline I_syn_exc pA = convolve(g_exc, exc_spikes) * (V_bounded - E_exc)
        inline I_syn_inh pA = convolve(g_inh, inh_spikes) * (V_bounded - E_inh)

        V_m' = (-g_L * (V_bounded - E_L) + I_spike - I_syn_exc - I_syn_inh - w + I_e + I_stim) / C_m
        w' = (a * (V_bounded - E_L) - w) / tau_w

    parameters:
        # membrane parameters
        C_m pF = 281.0 pF         # Membrane Capacitance
        t_ref ms = 0.0 ms         # Refractory period
        V_reset mV = -60.0 mV     # Reset Potential
        g_L nS = 30.0 nS          # Leak Conductance
        E_L mV = -70.6 mV         # Leak reversal Potential (aka resting potential)

        # spike adaptation parameters
        a nS = 4 nS               # Subthreshold adaptation
        b pA = 80.5 pA            # Spike-triggered adaptation
        Delta_T mV = 2.0 mV       # Slope factor
        tau_w ms = 144.0 ms       # Adaptation time constant
        V_th mV = -50.4 mV        # Threshold Potential
        V_peak mV = 0 mV          # Spike detection threshold

        # synaptic parameters
        E_exc mV = 0 mV            # Excitatory reversal Potential
        tau_syn_exc ms = 0.2 ms    # Synaptic Time Constant Excitatory Synapse
        E_inh mV = -85.0 mV        # Inhibitory reversal Potential
        tau_syn_inh ms = 2.0 ms    # Synaptic Time Constant for Inhibitory Synapse

        # constant external input current
        I_e pA = 0 pA

    internals:
        # Impulse to add to DG_EXC on spike arrival to evoke unit-amplitude conductance excursion
        PSConInit_E nS/ms = nS * e / tau_syn_exc

        # Impulse to add to DG_INH on spike arrival to evoke unit-amplitude conductance excursion
        PSConInit_I nS/ms = nS * e / tau_syn_inh

        # refractory time in steps
        RefractoryCounts integer = steps(t_ref)

        # counts number of tick during the refractory period
        r integer

    input:
        exc_spikes nS <- excitatory spike
        inh_spikes nS <- inhibitory spike
        I_stim pA <- continuous

    output:
        spike

    update:
        process_input(I_stim)

        integrate_odes(w)

        if r > 0:
            # neuron is absolute refractory
            r -= 1
        else:
            integrate_odes(V_m)

        process_input(exc_spikes, inh_spikes)

        if V_m >= V_th:
            r = RefractoryCounts
            V_m = V_reset # clamp potential
            w += b
            emit_spike()
