# hh_cond_exp_destexhe - Hodgin Huxley based model, Traub, Destexhe and Mainen modified
# #####################################################################################
#
# Description
# +++++++++++
#
# hh_cond_exp_destexhe is an implementation of a modified Hodkin-Huxley model, which is based on the hh_cond_exp_traub model.
#
# Differences to hh_cond_exp_traub:
#
# (1) **Additional background noise:** A background current whose conductances were modeled as an Ornstein-Uhlenbeck process is injected into the neuron.
# (2) **Additional non-inactivating K+ current:** A non-inactivating K+ current was included, which is responsible for spike frequency adaptation.
#
#
# References
# ++++++++++
#
# .. [1] Traub, R.D. and Miles, R. (1991) Neuronal Networks of the Hippocampus. Cambridge University Press, Cambridge UK.
#
# .. [2] Destexhe, A. and Pare, D. (1999) Impact of Network Activity on the Integrative Properties of Neocortical Pyramidal Neurons In Vivo. Journal of Neurophysiology
#
# .. [3] A. Destexhe, M. Rudolph, J.-M. Fellous and T. J. Sejnowski (2001) Fluctuating synaptic conductances recreate in vivo-like activity in neocortical neurons. Neuroscience
#
# .. [4] Z. Mainen, J. Joerges, J. R. Huguenard and T. J. Sejnowski (1995) A Model of Spike Initiation in Neocortical Pyramidal Neurons. Neuron
#
# See also
# ++++++++
#
# hh_cond_exp_traub
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model hh_cond_exp_destexhe_neuron:

    state:
        g_noise_exc "conductance" = g_noise_exc0
        g_noise_inh "conductance" = g_noise_inh0

        V_m "voltage" = E_L        # Membrane potential
        V_m_old "voltage" = E_L    # Membrane potential at the previous timestep
        refr_t "time" = 0 ms    # Refractory period timer

        Act_m real = alpha_m_init / (alpha_m_init + beta_m_init)
        Act_h real = alpha_h_init / (alpha_h_init + beta_h_init)
        Inact_n real = alpha_n_init / (alpha_n_init + beta_n_init)

        Noninact_p real = alpha_p_init / (alpha_p_init + beta_p_init)

    equations:
        # synapses: exponential conductance
        kernel g_inh = exp(-t / tau_syn_inh)
        kernel g_exc = exp(-t / tau_syn_exc)

        # Add aliases to simplify the equation definition of V_m
        inline I_Na "current" = g_Na * Act_m * Act_m * Act_m * Act_h * (V_m - E_Na)
        inline I_K "current" = g_K * Inact_n * Inact_n * Inact_n * Inact_n * (V_m - E_K)
        inline I_L "current" = g_L * (V_m - E_L)

        inline I_M "current" = g_M * Noninact_p * (V_m - E_K)
        inline I_noise "current" = (g_noise_exc * (V_m - E_exc) + g_noise_inh * (V_m - E_inh))

        inline I_syn_exc "current" = unit_psg * convolve(g_exc, exc_spikes) * (V_m - E_exc)
        inline I_syn_inh "current" = unit_psg * convolve(g_inh, inh_spikes) * (V_m - E_inh)

        V_m' =(-I_Na - I_K - I_M - I_L - I_syn_exc - I_syn_inh + I_e + I_stim - I_noise) / C_m
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero, at a rate of one (milli)second per (milli)second

        # channel dynamics
        inline V_rel "voltage" = V_m - V_T
        inline alpha_n "1 / time" = 0.032 / (1 ms * mV) * (15 mV - V_rel) / (exp((15 mV - V_rel) / 5 mV) - 1)
        inline beta_n "1 / time" = 0.5 / 1 ms * exp((10 mV - V_rel) / 40 mV)
        inline alpha_m "1 / time" = 0.32 / (1 ms * mV) * (13 mV - V_rel) / (exp((13 mV - V_rel) / 4 mV) - 1)
        inline beta_m "1 / time" = 0.28 / (1 ms * mV) * (V_rel - 40 mV) / (exp((V_rel - 40 mV) / 5 mV) - 1)
        inline alpha_h "1 / time" = 0.128 / 1 ms * exp((17 mV - V_rel) / 18 mV)
        inline beta_h "1 / time" = (4 / (1 + exp((40 mV - V_rel) / 5 mV))) / 1 ms

        inline alpha_p "1 / time" = 0.0001 / (1 ms * mV) * (V_m + 30 mV) / (1 - exp(-(V_m + 30 mV) / 9 mV))
        inline beta_p "1 / time" = -0.0001 / (1 ms * mV) * (V_m + 30 mV) / (1 - exp((V_m + 30 mV) / 9 mV))

        Act_m' = (alpha_m - (alpha_m + beta_m) * Act_m)
        Act_h' = (alpha_h - (alpha_h + beta_h) * Act_h)
        Inact_n' = (alpha_n - (alpha_n + beta_n) * Inact_n)

        Noninact_p' = (alpha_p - (alpha_p + beta_p) * Noninact_p)

    parameters:
        g_Na "conductance" = 17318 nS         # Na conductance
        g_K "conductance" = 3463.6 nS         # K conductance
        g_L "conductance" = 15.5862 nS        # Leak conductance
        C_m "capacitance" = 346.36 pF         # Membrane capacitance
        E_Na "voltage" = 60 mV            # Reversal potentials
        E_K "voltage" = -90 mV            # Potassium reversal potential
        E_L "voltage" = -80 mV            # Leak reversal potential (a.k.a. resting potential)
        V_T "voltage" = -58 mV            # Voltage offset that controls dynamics. For default
                                   # parameters, V_T = -63mV results in a threshold around -50mV.
        tau_syn_exc "time" = 2.7 ms    # Synaptic time constant for excitatory synapse
        tau_syn_inh "time" = 10.5 ms   # Synaptic time constant for inhibitory synapse
        E_exc "voltage" = 0 mV            # Excitatory synaptic reversal potential
        E_inh "voltage" = -75 mV          # Inhibitory synaptic reversal potential

        g_M "conductance" = 173.18 nS         # Conductance of non-inactivating K+ channel

        # Conductance OU noise
        g_noise_exc0 "conductance" = 0.012 uS		# Mean of the excitatory noise conductance
        g_noise_inh0 "conductance" = 0.057 uS		# Mean of the inhibitory noise conductance
        sigma_noise_exc "conductance" = 0.003 uS	# Standard deviation of the excitatory noise conductance
        sigma_noise_inh "conductance" = 0.0066 uS	# Standard deviation of the inhibitory noise conductance

        alpha_n_init "1 / time" = 0.032 / (1 ms * mV) * (15 mV - V_m) / (exp((15 mV - V_m) / 5 mV) - 1)
        beta_n_init "1 / time" = 0.5 / 1 ms * exp((10 mV - V_m) / 40 mV)
        alpha_m_init "1 / time" = 0.32 / (1 ms * mV) * (13 mV - V_m) / (exp((13 mV - V_m) / 4 mV) - 1)
        beta_m_init "1 / time" = 0.28 / (1 ms * mV) * (V_m - 40 mV) / (exp((V_m - 40 mV) / 5 mV) - 1)
        alpha_h_init "1 / time" = 0.128 / 1 ms * exp((17 mV - V_m) / 18 mV)
        beta_h_init "1 / time" = (4 / (1 + exp((40 mV - V_m) / 5 mV))) / 1 ms

        alpha_p_init "1 / time" = 0.0001 / (1 ms * mV) * (V_m + 30 mV) / (1 - exp(-(V_m + 30 mV) / 9 mV))
        beta_p_init "1 / time" = -0.0001 / (1 ms * mV) * (V_m + 30 mV) / (1 - exp((V_m + 30 mV) / 9 mV))

        refr_T "time" = 2 ms          # Duration of refractory period

        # constant external input current
        I_e "current" = 0 pA

    internals:
        D_exc "conductance**2 / time" = 2 * sigma_noise_exc**2 / tau_syn_exc
        D_inh "conductance**2 / time" = 2 * sigma_noise_inh**2 / tau_syn_inh

        unit_psg "conductance" = 1 nS        # Unitary postsynaptic conductance amplitude

    input:
        inh_spikes <- spike
        exc_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        # Hodgkin-Huxley type model: ODEs are always integrated, regardless of refractory state
        A_exc "conductance" = ((D_exc * tau_syn_exc / 2) * (1 - exp(-2 * timestep() / tau_syn_exc)))**.5
        A_inh "conductance" = ((D_inh * tau_syn_inh / 2) * (1 - exp(-2 * timestep() / tau_syn_inh)))**.5
        g_noise_exc = g_noise_exc0 + (g_noise_exc - g_noise_exc0) * exp(-timestep() / tau_syn_exc) + A_exc * random_normal(0, 1)
        g_noise_inh = g_noise_inh0 + (g_noise_inh - g_noise_inh0) * exp(-timestep() / tau_syn_inh) + A_inh * random_normal(0, 1)

        V_m_old "voltage" = V_m

        if refr_t > 0 ms:
            # neuron is absolute refractory
            integrate_odes(Act_m, Act_h, Inact_n, Noninact_p, V_m, refr_t)
        else:
            # neuron not refractory
            integrate_odes(Act_m, Act_h, Inact_n, Noninact_p, V_m)

    onCondition(refr_t <= 0 ms and V_m > V_T + 30mV and V_m_old > V_m):
        refr_t = refr_T    # start of the refractory period
        emit_spike()
