# iaf_chxk_2008 - Conductance based leaky integrate-and-fire neuron model used in Casti et al. 2008
# #################################################################################################
#
# Description
# +++++++++++
#
# iaf_chxk_2008 is an implementation of a spiking neuron using IAF dynamics with
# conductance-based synapses [1]_. A spike is emitted when the membrane potential
# is crossed from below. After a spike, an afterhyperpolarizing (AHP) conductance
# is activated which repolarizes the neuron over time. Membrane potential is not
# reset explicitly and the model also has no explicit refractory time.
#
# The AHP conductance and excitatory and inhibitory synaptic input conductances
# follow alpha-function time courses as in the iaf_cond_alpha model.
#
# .. note ::
#
#    In the original Fortran implementation underlying [1]_, all previous AHP activation was discarded when a new spike
#    occurred, leading to reduced AHP currents in particular during periods of high spiking activity. Set ``ahp_bug`` to
#    ``true`` to obtain this behavior in the model.
#
#
# References
# ++++++++++
#
# .. [1] Casti A, Hayot F, Xiao Y, Kaplan E (2008) A simple model of retina-LGN
#        transmission. Journal of Computational Neuroscience 24:235-252.
#        DOI: https://doi.org/10.1007/s10827-007-0053-7
#
#
# See also
# ++++++++
#
# iaf_cond_alpha
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model iaf_chxk_2008_neuron:

    state:
        V_m mV = E_L                # membrane potential
        V_m_prev mV = E_L           # membrane potential
        g_ahp nS = 0 nS             # AHP conductance
        g_ahp' nS/ms = 0 nS / ms    # AHP conductance

    equations:
        kernel g_inh = (e / tau_syn_inh) * t * exp(-t / tau_syn_inh)
        kernel g_exc = (e / tau_syn_exc) * t * exp(-t / tau_syn_exc)
        g_ahp'' = -2 * g_ahp' / tau_ahp - g_ahp / tau_ahp**2

        inline I_syn_exc pA = unit_psg * convolve(g_exc, exc_spikes.weight) * ( V_m - E_exc )
        inline I_syn_inh pA = unit_psg * convolve(g_inh, inh_spikes.weight) * ( V_m - E_inh )
        inline I_ahp pA = g_ahp * (V_m - E_ahp)
        inline I_leak pA = g_L * (V_m - E_L)

        V_m' = (-I_leak - I_syn_exc - I_syn_inh - I_ahp + I_e + I_stim) / C_m

    parameters:
        V_th mV = -45.0 mV        # Threshold potential
        E_exc mV = 20 mV          # Excitatory reversal potential
        E_inh mV = -90 mV         # Inhibitory reversal potential
        g_L nS = 100 nS           # Leak conductance
        C_m pF = 1000.0 pF        # Membrane capacitance
        E_L mV = -60.0 mV         # Leak reversal potential (a.k.a. resting potential)
        tau_syn_exc ms = 1 ms     # Synaptic time constant of excitatory synapse
        tau_syn_inh ms = 1 ms     # Synaptic time constant of inhibitory synapse
        tau_ahp ms = 0.5 ms       # Afterhyperpolarization (AHP) time constant
        G_ahp nS = 443.8 nS       # AHP conductance
        E_ahp mV = -95 mV         # AHP potential
        ahp_bug boolean = false   # If true, discard AHP conductance value from previous spikes

        # constant external input current
        I_e pA = 0 pA

    internals:
        # Impulse to add to DG_EXC on spike arrival to evoke unit-amplitude conductance excursion.
        PSConInit_E nS/ms = nS * e / tau_syn_exc

        # Impulse to add to DG_INH on spike arrival to evoke unit-amplitude conductance excursion.
        PSConInit_I nS/ms = nS * e / tau_syn_inh

        PSConInit_AHP real = G_ahp * e / tau_ahp * (ms / nS)

        unit_psg nS = 1 nS        # Unitary postsynaptic conductance amplitude

    input:
        inh_spikes <- spike
        exc_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        V_m_prev = V_m
        integrate_odes()

    onCondition(V_m_prev < V_th and V_m >= V_th):
        # Find precise spike time using linear interpolation
        sigma real = (V_m - V_th) * resolution() / (V_m - V_m_prev) / ms

        alpha real = exp(-sigma / tau_ahp)

        delta_dg_ahp real = PSConInit_AHP * alpha
        delta_g_ahp real = delta_dg_ahp * sigma

        if ahp_bug == true:
            # Bug in original code ignores AHP conductance from previous spikes
            g_ahp = delta_g_ahp * nS
            g_ahp' = delta_dg_ahp * nS / ms
        else:
            # Correct implementation adds initial values for new AHP to AHP history
            g_ahp += delta_g_ahp * nS
            g_ahp' += delta_dg_ahp * nS / ms

        emit_spike()
