"""
iaf_psc_delta - Current-based leaky integrate-and-fire neuron model with delta-kernel post-synaptic currents
############################################################################################################

Description
+++++++++++

iaf_psc_delta is an implementation of a leaky integrate-and-fire model
where the potential jumps on each spike arrival.

The threshold crossing is followed by an absolute refractory period
during which the membrane potential is clamped to the resting potential.

Spikes arriving while the neuron is refractory, are discarded by
default. If the property ``with_refr_input`` is set to true, such
spikes are added to the membrane potential at the end of the
refractory period, dampened according to the interval between
arrival and end of refractoriness.

The general framework for the consistent formulation of systems with
neuron like dynamics interacting by point events is described in
[1]_.  A flow chart can be found in [2]_.

Critical tests for the formulation of the neuron model are the
comparisons of simulation results for different computation step
sizes. sli/testsuite/nest contains a number of such tests.

The iaf_psc_delta is the standard model used to check the consistency
of the nest simulation kernel because it is at the same time complex
enough to exhibit non-trivial dynamics and simple enough compute
relevant measures analytically.


References
++++++++++

.. [1] Rotter S,  Diesmann M (1999). Exact simulation of
       time-invariant linear systems with applications to neuronal
       modeling. Biologial Cybernetics 81:381-402.
       DOI: https://doi.org/10.1007/s004220050570
.. [2] Diesmann M, Gewaltig M-O, Rotter S, & Aertsen A (2001). State
       space analysis of synchronous spiking in cortical neural
       networks. Neurocomputing 38-40:565-571.
       DOI: https://doi.org/10.1016/S0925-2312(01)00409-X


See also
++++++++

iaf_psc_alpha, iaf_psc_exp
"""
model iaf_psc_delta_neuron:
    state:
        r integer = 0    # Counts number of tick during the refractory period
        V_m mV = E_L     # Membrane potential

    equations:
        kernel K_delta = delta(t)
        kernel K_exp = exp(-t / tau_syn)
        V_m' = -(V_m - E_L) / tau_m + (mV / pA / ms) * convolve(K_delta, spikes) + (I_e + I_stim) / C_m

    parameters:
        tau_m   ms = 10 ms              # Membrane time constant
        C_m     pF = 250 pF             # Capacity of the membrane
        t_ref   ms = 2 ms               # Duration of refractory period
        tau_syn ms = 2 ms               # Time constant of synaptic current
        E_L     mV = -70 mV             # Resting membrane potential
        V_reset mV = -70 mV             # Reset potential of the membrane
        V_th    mV = -55 mV             # Spike threshold
        V_min   mV = -inf * 1 mV        # Absolute lower value for the membrane potential

        # constant external input current
        I_e pA = 0 pA

    internals:
        h ms = resolution()
        RefractoryCounts integer = steps(t_ref) # refractory time in steps

    input:
        spikes pA <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        process_input(I_stim)

        if r == 0: # neuron not refractory
            integrate_odes()

            # lower bound of membrane potential
            V_m = V_m < V_min ? V_min : V_m
        else: # neuron is absolute refractory
            r -= 1

        process_input(spikes)

        if V_m >= V_th: # threshold crossing
            r = RefractoryCounts
            V_m = V_reset
            emit_spike()
