"""
iaf_psc_exp - Leaky integrate-and-fire neuron model with exponential PSCs
#########################################################################

Description
+++++++++++

iaf_psc_exp is an implementation of a leaky integrate-and-fire model
with exponential-kernel postsynaptic currents (PSCs) according to [1]_.
Thus, postsynaptic currents have an infinitely short rise time.

The threshold crossing is followed by an absolute refractory period (t_ref)
during which the membrane potential is clamped to the resting potential
and spiking is prohibited.

.. note::
   If tau_m is very close to tau_syn_exc or tau_syn_inh, numerical problems
   may arise due to singularities in the propagator matrics. If this is
   the case, replace equal-valued parameters by a single parameter.

   For details, please see ``IAF_neurons_singularity.ipynb`` in
   the NEST source code (``docs/model_details``).


References
++++++++++

.. [1] Tsodyks M, Uziel A, Markram H (2000). Synchrony generation in recurrent
       networks with frequency-dependent synapses. The Journal of Neuroscience,
       20,RC50:1-5. URL: https://infoscience.epfl.ch/record/183402


See also
++++++++

iaf_cond_exp
"""
model iaf_psc_exp_neuron:

    state:
        V_m mV = E_L    # Membrane potential
        refr_t ms = 0 ms    # Refractory period timer
        I_syn_exc pA = 0 pA
        I_syn_inh pA = 0 pA

    equations:
        I_syn_exc' = -I_syn_exc / tau_syn_exc
        I_syn_inh' = -I_syn_inh / tau_syn_inh
        V_m' = -(V_m - E_L) / tau_m + (I_syn_exc - I_syn_inh + I_e + I_stim) / C_m

    parameters:
        C_m pF = 250 pF           # Capacitance of the membrane
        tau_m ms = 10 ms          # Membrane time constant
        tau_syn_inh ms = 2 ms     # Time constant of inhibitory synaptic current
        tau_syn_exc ms = 2 ms     # Time constant of excitatory synaptic current
        refr_T ms = 2 ms          # Duration of refractory period
        E_L mV = -70 mV           # Resting potential
        V_reset mV = -70 mV       # Reset value of the membrane potential
        V_th mV = -55 mV          # Spike threshold potential

        # constant external input current
        I_e pA = 0 pA

    input:
        exc_spikes pA <- excitatory spike
        inh_spikes pA <- inhibitory spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if refr_t > 0:
            # neuron is absolute refractory, do not evolve V_m
            r -= resolution()
            integrate_odes(I_syn_exc, I_syn_inh)
        else:
            # neuron not refractory, so evolve all ODEs (including V_m)
            integrate_odes()

    onReceive(exc_spikes):
        I_syn_exc += exc_spikes

    onReceive(inh_spikes):
        I_syn_inh += inh_spikes

    onCondition(V_m >= V_th):
        # threshold crossing
        refr_t += refr_T
        V_m = V_reset
        emit_spike()

    onCondition(refr_t < 0 ms):
        # end of refractory period
        refr_t = 0 ms
