"""
iaf_psc_exp - Leaky integrate-and-fire neuron model with exponential PSCs
#########################################################################

Description
+++++++++++

iaf_psc_exp is an implementation of a leaky integrate-and-fire model
with exponential-kernel postsynaptic currents (PSCs) according to [1]_.
Thus, postsynaptic currents have an infinitely short rise time.

The threshold crossing is followed by an absolute refractory period (t_ref)
during which the membrane potential is clamped to the resting potential
and spiking is prohibited.

.. note::
   If tau_m is very close to tau_syn_exc or tau_syn_inh, numerical problems
   may arise due to singularities in the propagator matrics. If this is
   the case, replace equal-valued parameters by a single parameter.

   For details, please see ``IAF_neurons_singularity.ipynb`` in
   the NEST source code (``docs/model_details``).


References
++++++++++

.. [1] Tsodyks M, Uziel A, Markram H (2000). Synchrony generation in recurrent
       networks with frequency-dependent synapses. The Journal of Neuroscience,
       20,RC50:1-5. URL: https://infoscience.epfl.ch/record/183402


See also
++++++++

iaf_cond_exp
"""
neuron iaf_psc_exp:

  state:
    r integer = 0                          # counts number of tick during the refractory period
    V_m mV = E_L
  end

  equations:
    kernel I_kernel_inh = exp(-t / tau_syn_inh)
    kernel I_kernel_exc = exp(-t / tau_syn_exc)
    inline I_syn pA = convolve(I_kernel_exc, exc_spikes) - convolve(I_kernel_inh, inh_spikes)
    V_m' = -(V_m - E_L) / tau_m + (I_syn + I_e + I_stim) / C_m
  end

  parameters:
    C_m pF = 250 pF           # Capacitance of the membrane
    tau_m ms = 10 ms          # Membrane time constant
    tau_syn_inh ms = 2 ms     # Time constant of inhibitory synaptic current
    tau_syn_exc ms = 2 ms     # Time constant of excitatory synaptic current
    t_ref ms = 2 ms           # Duration of refractory period
    E_L  mV = -70 mV          # Resting potential
    V_reset mV = -70 mV       # Reset value of the membrane potential
    V_th   mV = -55 mV        # Threshold

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    exc_spikes pA <- excitatory spike
    inh_spikes pA <- inhibitory spike
    I_stim pA <- continuous
  end

  output: spike

  update:
    if r == 0: # neuron not refractory, so evolve V
      integrate_odes()
    else:
      r = r - 1 # neuron is absolute refractory
    end

    if V_m >= V_th: # threshold crossing
      r = RefractoryCounts
      V_m = V_reset
      emit_spike()
    end

  end

end
