"""
iaf_psc_exp_dend - Leaky integrate-and-fire neuron model with exponential PSCs
#########################################################################

Description
+++++++++++

iaf_psc_exp is an implementation of a leaky integrate-and-fire model
with exponential-kernel postsynaptic currents (PSCs) according to [1]_.
Thus, postsynaptic currents have an infinitely short rise time.

The threshold crossing is followed by an absolute refractory period (t_ref)
during which the membrane potential is clamped to the resting potential
and spiking is prohibited.

.. note::
   If tau_m is very close to tau_syn_ex or tau_syn_in, numerical problems
   may arise due to singularities in the propagator matrics. If this is
   the case, replace equal-valued parameters by a single parameter.

   For details, please see ``IAF_neurons_singularity.ipynb`` in
   the NEST source code (``docs/model_details``).


References
++++++++++

.. [1] Tsodyks M, Uziel A, Markram H (2000). Synchrony generation in recurrent
       networks with frequency-dependent synapses. The Journal of Neuroscience,
       20,RC50:1-5. URL: https://infoscience.epfl.ch/record/183402


See also
++++++++

iaf_cond_exp
"""
model iaf_psc_exp_dend_neuron:

    state:
        r integer = 0             # Counts number of ticks during the refractory period
        V_m mV = E_L              # Membrane potential
        I_dend pA = 0 pA          # Third factor, to be read out by synapse during weight update
        I_syn_exc pA = 0 pA
        I_syn_inh pA = 0 pA

    equations:
        I_syn_exc' = -I_syn_exc / tau_syn_exc
        I_syn_inh' = -I_syn_inh / tau_syn_inh
        inline I_syn pA = convolve(I_kernel_exc, exc_spikes) * pA - convolve(I_kernel_inh, inh_spikes) * pA
        V_m' = -(V_m - E_L) / tau_m + (I_syn + I_e + I_stim) / C_m

    parameters:
        C_m pF = 250 pF           # Capacity of the membrane
        tau_m ms = 10 ms          # Membrane time constant
        tau_syn_inh ms = 2 ms     # Time constant of inhibitory synaptic current
        tau_syn_exc ms = 2 ms     # Time constant of excitatory synaptic current
        t_ref ms = 2 ms           # Duration of refractory period
        E_L mV = -70 mV           # Resting potential
        V_reset mV = -70 mV       # Reset potential of the membrane
        V_th mV = -55 mV          # Spike threshold potential

        # constant external input current
        I_e pA = 0 pA

    internals:
        RefractoryCounts integer = steps(t_ref) # refractory time in steps

    input:
        exc_spikes <- excitatory spike
        inh_spikes <- inhibitory spike
        I_stim pA <- continuous

    onReceive(exc_spikes):
        I_syn_exc += exc_spikes

    onReceive(inh_spikes):
        I_syn_inh += inh_spikes

    output:
        spike

    update:
        I_dend *= .95

        if r == 0: # neuron not refractory, so evolve V
            integrate_odes()
        else:
            r = r - 1 # neuron is absolute refractory

        if V_m >= V_th: # threshold crossing
            r = RefractoryCounts
            V_m = V_reset
            emit_spike()
