"""
ignore_and_fire - Neuron generating spikes at fixed intervals irrespective of inputs
######################################################################################

Description
+++++++++++

The ``ignore_and_fire`` neuron is a neuron model generating spikes at a predefined ``firing_rate`` with a constant inter-spike interval ("fire"), irrespective of its inputs ("ignore"). In this simplest version of the ``ignore_and_fire`` neuron, the inputs from other neurons or devices are not processed at all (*). The ``ignore_and_fire`` neuron is primarily used for neuronal-network model verification and validation purposes, in particular, to evaluate the correctness and performance of connectivity generation and inter-neuron communication. It permits an easy scaling of the network size and/or connectivity without affecting the output spike statistics. The amount of network traffic is predefined by the user, and therefore fully controllable and predictable, irrespective of the network size and structure.

To create asynchronous activity for a population of ``ignore_and_fire`` neurons, the firing ``phase``s can be randomly initialised. Note that the firing ``phase`` is a real number, defined as the time to the next spike relative to the firing period.

(*) The model can easily be extended and equipped with any arbitrary input processing (such as calculating input currents with alpha-function shaped PSC kernels or updating the gating variables in the Hodgkin-Huxley model) or (after-) spike generation dynamics to make it more similar and comparable to other non-ignorant neuron models. In such extended ignore_and_fire models, the spike emission process would still be decoupled from the intrinsic neuron dynamics.

.. note::
   This neuron model can only be used in combination with a fixed
   simulation resolution (timestep size).

Authors
+++++++

Tetzlaff (February 2021; January 2022)

"""

model ignore_and_fire_neuron:

  state:
    phase real = 1.                # relative time to next spike (in (0,1])
    phase_steps integer = firing_period_steps / 2   # start halfway through the interval by default

  parameters:
    firing_rate Bq = 10. Bq        # firing rate

  internals:
    firing_period_steps integer = steps( 1. / firing_rate )    # firing period in steps

  input:
    spikes <- spike   # the neuron receives spikes, but is not processing them

  output:
    spike

  update:
    if phase_steps >= firing_period_steps - 1:
       emit_spike()
       phase_steps = 0
    else:
       phase_steps += 1

    phase = phase_steps / firing_period_steps
