# traub_cond_multisyn - Traub model according to Borgers 2017
# ###########################################################
#
# Description
# +++++++++++
#
# Reduced Traub-Miles Model of a Pyramidal Neuron in Rat Hippocampus [1]_.
# parameters got from reference [2]_ chapter 5.
#
# AMPA, NMDA, GABA_A, and GABA_B conductance-based synapses with
# beta-function (difference of two exponentials) time course corresponding
# to "hill_tononi" model.
#
# References
# ++++++++++
#
# .. [1] R. D. Traub and R. Miles, Neuronal Networks of the Hippocampus,Cambridge University Press, Cambridge, UK, 1991.
# .. [2] Borgers, C., 2017. An introduction to modeling neuronal dynamics (Vol. 66). Cham: Springer.
#
# See also
# ++++++++
#
# hh_cond_exp_traub
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model traub_cond_multisyn_neuron:
    state:
        V_m "voltage" = -70. mV    # Membrane potential
        V_m_old "voltage" = E_L    # Membrane potential at previous timestep for threshold check
        refr_t "time" = 0 ms    # Refractory period timer

        Act_m real = alpha_m_init / (alpha_m_init + beta_m_init)      # Activation variable m for Na
        Inact_h real = alpha_h_init / (alpha_h_init + beta_h_init)    # Inactivation variable h for Na
        Act_n real = alpha_n_init / (alpha_n_init + beta_n_init)      # Activation variable n for K

        g_AMPA real = 0
        g_NMDA real = 0
        g_GABAA real = 0
        g_GABAB real = 0
        g_AMPA$ real = AMPAInitialValue
        g_NMDA$ real = NMDAInitialValue
        g_GABAA$ real = GABA_AInitialValue
        g_GABAB$ real = GABA_BInitialValue

    equations:
        recordable inline I_syn_ampa "current" = -unit_psg * convolve(g_AMPA, AMPA_spikes) * (V_m - AMPA_E_rev)
        recordable inline I_syn_nmda "current" = -unit_psg * convolve(g_NMDA, NMDA_spikes) * (V_m - NMDA_E_rev) / (1 + exp((NMDA_Vact - V_m) / NMDA_Sact))
        recordable inline I_syn_gaba_a "current" = -unit_psg * convolve(g_GABAA, GABA_A_spikes) * (V_m - GABA_A_E_rev)
        recordable inline I_syn_gaba_b "current" = -unit_psg * convolve(g_GABAB, GABA_B_spikes) * (V_m - GABA_B_E_rev)
        recordable inline I_syn "current" = I_syn_ampa + I_syn_nmda + I_syn_gaba_a + I_syn_gaba_b

        inline I_Na "current" = g_Na * Act_m * Act_m * Act_m * Inact_h * (V_m - E_Na)
        inline I_K "current" = g_K * Act_n * Act_n * Act_n * Act_n * (V_m - E_K)
        inline I_L "current" = g_L * (V_m - E_L)

        V_m' = (-(I_Na + I_K + I_L) + I_e + I_stim + I_syn) / C_m
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero, at a rate of one (milli)second per (milli)second

        # Act_n
        inline alpha_n real = 0.032 * (V_m / 1 mV + 52.) / (1. - exp(-(V_m / 1 mV + 52.) / 5.))
        inline beta_n real = 0.5 * exp(-(V_m / 1 mV + 57.) / 40.)
        Act_n' = (alpha_n * (1 - Act_n) - beta_n * Act_n) / 1 ms    # n-variable

        # Act_m
        inline alpha_m real = 0.32 * (V_m / 1 mV + 54.) / (1.0 - exp(-(V_m / 1 mV + 54.) / 4.))
        inline beta_m real = 0.28 * (V_m / 1 mV + 27.) / (exp((V_m / 1 mV + 27.) / 5.) - 1.)
        Act_m' = (alpha_m * (1 - Act_m) - beta_m * Act_m) / 1 ms    # m-variable

        # Inact_h
        inline alpha_h real = 0.128 * exp(-(V_m / 1 mV + 50.0) / 18.0)
        inline beta_h real = 4.0 / (1.0 + exp(-(V_m / 1 mV + 27.) / 5.))
        Inact_h' = (alpha_h * (1 - Inact_h) - beta_h * Inact_h) / 1 ms    # h-variable

        #############
        # Synapses
        #############

        kernel g_AMPA' = g_AMPA$ - g_AMPA / tau_AMPA_2,
               g_AMPA$' = -g_AMPA$ / tau_AMPA_1

        kernel g_NMDA' = g_NMDA$ - g_NMDA / tau_NMDA_2,
               g_NMDA$' = -g_NMDA$ / tau_NMDA_1

        kernel g_GABAA' = g_GABAA$ - g_GABAA / tau_GABAA_2,
               g_GABAA$' = -g_GABAA$ / tau_GABAA_1

        kernel g_GABAB' = g_GABAB$ - g_GABAB / tau_GABAB_2,
               g_GABAB$' = -g_GABAB$ / tau_GABAB_1

    parameters:
        C_m "capacitance" = 100 pF         # Membrane capacitance
        g_Na "conductance" = 10000 nS      # Sodium peak conductance
        g_K "conductance" = 8000 nS        # Potassium peak conductance
        g_L "conductance" = 10 nS          # Leak conductance
        E_Na "voltage" = 50 mV         # Sodium reversal potential
        E_K "voltage" = -100 mV        # Potassium reversal potentia
        E_L "voltage" = -67 mV         # Leak reversal potential (a.k.a. resting potential)
        V_Tr "voltage" = -20 mV        # Spike threshold
        refr_T "time" = 2 ms        # Duration of refractory period

        # Parameters for synapse of type AMPA, GABA_A, GABA_B and NMDA
        AMPA_g_peak "conductance" = 0.1 nS      # peak conductance
        AMPA_E_rev "voltage" = 0.0 mV       # reversal potential
        tau_AMPA_1 "time" = 0.5 ms       # rise time
        tau_AMPA_2 "time" = 2.4 ms       # decay time, Tau_1 < Tau_2

        NMDA_g_peak "conductance" = 0.075 nS    # peak conductance
        tau_NMDA_1 "time" = 4.0 ms       # rise time
        tau_NMDA_2 "time" = 40.0 ms      # decay time, Tau_1 < Tau_2
        NMDA_E_rev "voltage" = 0.0 mV       # reversal potential
        NMDA_Vact "voltage" = -58.0 mV      # inactive for V << Vact, inflection of sigmoid
        NMDA_Sact "voltage" = 2.5 mV        # scale of inactivation

        GABA_A_g_peak "conductance" = 0.33 nS   # peak conductance
        tau_GABAA_1 "time" = 1.0 ms      # rise time
        tau_GABAA_2 "time" = 7.0 ms      # decay time, Tau_1 < Tau_2
        GABA_A_E_rev "voltage" = -70.0 mV   # reversal potential

        GABA_B_g_peak "conductance" = 0.0132 nS # peak conductance
        tau_GABAB_1 "time" = 60.0 ms     # rise time
        tau_GABAB_2 "time" = 200.0 ms    # decay time, Tau_1 < Tau_2
        GABA_B_E_rev "voltage" = -90.0 mV   # reversal potential for intrinsic current

        # constant external input current
        I_e "current" = 0 pA

    internals:
        AMPAInitialValue real = compute_synapse_constant(tau_AMPA_1, tau_AMPA_2, AMPA_g_peak)
        NMDAInitialValue real = compute_synapse_constant(tau_NMDA_1, tau_NMDA_2, NMDA_g_peak)
        GABA_AInitialValue real = compute_synapse_constant(tau_GABAA_1, tau_GABAA_2, GABA_A_g_peak)
        GABA_BInitialValue real = compute_synapse_constant(tau_GABAB_1, tau_GABAB_2, GABA_B_g_peak)

        alpha_n_init real = 0.032 * (V_m / 1 mV + 52.) / (1. - exp(-(V_m / 1 mV + 52.) / 5.))
        beta_n_init real = 0.5 * exp(-(V_m / 1 mV + 57.) / 40.)
        alpha_m_init real = 0.32 * (V_m / 1 mV + 54.) / (1.0 - exp(-(V_m / 1 mV + 54.) / 4.))
        beta_m_init real = 0.28 * (V_m / 1 mV + 27.) / (exp((V_m / 1 mV + 27.) / 5.) - 1.)
        alpha_h_init real = 0.128 * exp(-(V_m / 1 mV + 50.0) / 18.0)
        beta_h_init real = 4.0 / (1.0 + exp(-(V_m / 1 mV + 27.) / 5.))

        unit_psg "conductance" = 1 nS        # Unitary postsynaptic conductance amplitude

    input:
        AMPA_spikes <- spike
        NMDA_spikes <- spike
        GABA_A_spikes <- spike
        GABA_B_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        # Hodgkin-Huxley type model: ODEs are always integrated, regardless of refractory state
        V_m_old = V_m
        if refr_t > 0 ms:
            # neuron is absolute refractory
            integrate_odes(V_m, Act_n, Act_m, Inact_h, refr_t)
        else:
            # neuron not refractory
            integrate_odes(V_m, Act_n, Act_m, Inact_h)

    onCondition(refr_t <= 0 ms and V_m > V_Tr and V_m_old > V_m):
        # threshold crossing and maximum
        refr_t = refr_T    # start of the refractory period
        emit_spike()

    function compute_synapse_constant(Tau_1 "time", Tau_2 "time", g_peak real) real:
        # Factor used to account for the missing 1/((1/Tau_2)-(1/Tau_1)) term
        # in the ht_neuron_dynamics integration of the synapse terms.
        # See: Exact digital simulation of time-invariant linear systems
        # with applications to neuronal modeling, Rotter and Diesmann,
        # section 3.1.2.
        exact_integration_adjustment real = ((1 / Tau_2) - (1 / Tau_1)) * 1 ms

        t_peak real = (Tau_2 * Tau_1) * ln(Tau_2 / Tau_1) / (Tau_2 - Tau_1) / 1 ms
        normalisation_factor real = 1 / (exp(-t_peak / Tau_1) - exp(-t_peak / Tau_2))

        return g_peak * normalisation_factor * exact_integration_adjustment
