# wb_cond_exp - Wang-Buzsaki model
# ################################
#
# Description
# +++++++++++
#
# wb_cond_exp is an implementation of a modified Hodkin-Huxley model.
#
# (1) Post-synaptic currents: Incoming spike events induce a post-synaptic change
# of conductance modeled by an exponential function.
#
# (2) Spike Detection: Spike detection is done by a combined threshold-and-local-
# maximum search: if there is a local maximum above a certain threshold of
# the membrane potential, it is considered a spike.
#
# References
# ++++++++++
#
# .. [1] Wang, X.J. and Buzsaki, G., (1996) Gamma oscillation by synaptic
#        inhibition in a hippocampal interneuronal network model. Journal of
#        neuroscience, 16(20), pp.6402-6413.
#
# See Also
# ++++++++
#
# hh_cond_exp_traub, wb_cond_multisyn
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model wb_cond_exp_neuron:
    state:
        V_m "voltage" = E_L        # Membrane potential
        V_m_old "voltage" = E_L    # Membrane potential at previous timestep for threshold check
        refr_t "time" = 0 ms    # Refractory period timer

        Inact_h real = alpha_h_init / (alpha_h_init + beta_h_init)
        Act_n real = alpha_n_init / (alpha_n_init + beta_n_init)

    equations:
        # synapses: exponential conductance

        kernel g_inh = exp(-t / tau_syn_inh)
        kernel g_exc = exp(-t / tau_syn_exc)

        recordable inline I_syn_exc "current" = unit_psg * convolve(g_exc, exc_spikes) * (E_exc - V_m)
        recordable inline I_syn_inh "current" = unit_psg * convolve(g_inh, inh_spikes) * (E_inh - V_m)

        inline I_Na  "current" = g_Na * _subexpr(V_m) * Inact_h * (V_m - E_Na)
        inline I_K   "current" = g_K * Act_n**4 * (V_m - E_K)
        inline I_L   "current" = g_L * (V_m - E_L)

        V_m' = (-(I_Na + I_K + I_L) + I_e + I_stim + I_syn_exc + I_syn_inh) / C_m
        Act_n' = (alpha_n(V_m) * (1 - Act_n) - beta_n(V_m) * Act_n)    # n-variable
        Inact_h' = (alpha_h(V_m) * (1 - Inact_h) - beta_h(V_m) * Inact_h)    # h-variable
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero, at a rate of one (milli)second per (milli)second

    parameters:
        C_m "capacitance" = 100 pF           # Membrane capacitance
        g_Na "conductance" = 3500 nS         # Sodium peak conductance
        g_K "conductance" = 900 nS           # Potassium peak conductance
        g_L "conductance" = 10 nS            # Leak conductance
        E_Na "voltage" = 55 mV           # Sodium reversal potential
        E_K "voltage" = -90 mV           # Potassium reversal potential
        E_L "voltage" = -65 mV           # Leak reversal potential (a.k.a. resting potential)
        V_Tr "voltage" = -55 mV          # Spike threshold
        refr_T "time" = 2 ms          # Duration of refractory period

        tau_syn_exc "time" = 0.2 ms   # Rise time of the excitatory synaptic alpha function
        tau_syn_inh "time" = 10 ms    # Rise time of the inhibitory synaptic alpha function
        E_exc "voltage" = 0 mV           # Excitatory synaptic reversal potential
        E_inh "voltage" = -75 mV         # Inhibitory synaptic reversal potential

        # constant external input current
        I_e "current" = 0 pA

    internals:
        alpha_n_init "1 / time" = -0.05 ms**-1*mV**-1 * (E_L + 34.0 mV) / (exp(-0.1 * (E_L + 34.0 mV)) - 1.0)
        beta_n_init  "1 / time" = 0.625 ms**-1 * exp(-(E_L + 44.0 mV) / 80.0 mV)
        alpha_h_init "1 / time" = 0.35 ms**-1 * exp(-(E_L + 58.0 mV) / 20.0 mV)
        beta_h_init  "1 / time" = 5.0 / (exp(-0.1 mV**-1 * (E_L + 28.0 mV)) + 1.0) / 1 ms

        unit_psg "conductance" = 1 nS    # Unitary postsynaptic conductance amplitude

    input:
        exc_spikes <- spike
        inh_spikes <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        # Hodgkin-Huxley type model: ODEs are always integrated, regardless of refractory state
        V_m_old = V_m
        if refr_t > 0 ms:
            # neuron is absolute refractory
            integrate_odes(V_m, Act_n, Inact_h, refr_t)
        else:
            # neuron not refractory
            integrate_odes(V_m, Act_n, Inact_h)

    onCondition(refr_t <= 0 ms and V_m > 0 mV and V_m_old > V_m):
        # threshold crossing and maximum
        refr_t = refr_T    # start of the refractory period
        emit_spike()

    function _subexpr(V_m "voltage") real:
        return alpha_m(V_m)**3 / (alpha_m(V_m) + beta_m(V_m))**3

    function alpha_m(V_m "voltage") "1 / time":
        return 0.1 ms**-1*mV**-1 * (V_m + 35.0 mV) / (1.0 - exp(-0.1 mV * (V_m + 35.0 mV)))

    function beta_m(V_m "voltage") "1 / time":
        return 4.0 ms**-1 * exp(-(V_m + 60.0 mV) / 18.0 mV)

    function alpha_n(V_m "voltage") "1 / time":
        return -0.05 ms**-1*mV**-1 * (V_m + 34.0 mV) / (exp(-0.1 * (V_m + 34.0 mV)) - 1.0)

    function beta_n(V_m "voltage") "1 / time":
        return 0.625 ms**-1 * exp(-(V_m + 44.0 mV) / 80.0 mV)

    function alpha_h(V_m "voltage") "1 / time":
        return 0.35 ms**-1 * exp(-(V_m + 58.0 mV) / 20.0 mV)

    function beta_h(V_m "voltage") "1 / time":
        return 5.0 / (exp(-0.1 / 1 mV * (V_m + 28.0 mV)) + 1.0) / 1 ms
