# wb_cond_multisyn - Wang-Buzsaki model with multiple synapses
# ############################################################
#
# Description
# +++++++++++
#
# wb_cond_multisyn is an implementation of a modified Hodkin-Huxley model.
#
# Spike detection is done by a combined threshold-and-local-maximum search: if
# there is a local maximum above a certain threshold of the membrane potential,
# it is considered a spike.
#
# AMPA, NMDA, GABA_A, and GABA_B conductance-based synapses with
# beta-function (difference of two exponentials) time course.
#
# References
# ++++++++++
#
# .. [1] Wang, X.J. and Buzsaki, G., (1996) Gamma oscillation by synaptic
#        inhibition in a hippocampal interneuronal network model. Journal of
#        Neuroscience, 16(20), pp.6402-6413.
#
# See also
# ++++++++
#
# wb_cond_multisyn
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model wb_cond_multisyn_neuron:
    state:
        V_m "voltage" = -65. mV    # Membrane potential
        V_m_old "voltage" = E_L    # Membrane potential at previous timestep for threshold check
        refr_t "time" = 0 ms    # Refractory period timer

        Inact_h real = alpha_h_init / (alpha_h_init + beta_h_init)    # Inactivation variable h for Na
        Act_n real = alpha_n_init / (alpha_n_init + beta_n_init)    # Activation variable n for K

        g_AMPA real = 0
        g_NMDA real = 0
        g_GABAA real = 0
        g_GABAB real = 0
        g_AMPA$ real = AMPAInitialValue
        g_NMDA$ real = NMDAInitialValue
        g_GABAA$ real = GABA_AInitialValue
        g_GABAB$ real = GABA_BInitialValue

    equations:
        recordable inline I_syn_ampa "current" = -unit_psg * convolve(g_AMPA, AMPA) * (V_m - AMPA_E_rev)
        recordable inline I_syn_nmda "current" = -unit_psg * convolve(g_NMDA, NMDA) * (V_m - NMDA_E_rev) / (1 + exp((NMDA_Vact - V_m) / NMDA_Sact))
        recordable inline I_syn_gaba_a "current" = -unit_psg * convolve(g_GABAA, GABA_A) * (V_m - GABA_A_E_rev)
        recordable inline I_syn_gaba_b "current" = -unit_psg * convolve(g_GABAB, GABA_B) * (V_m - GABA_B_E_rev)
        recordable inline I_syn "current" = I_syn_ampa + I_syn_nmda + I_syn_gaba_a + I_syn_gaba_b

        inline I_Na  "current" = g_Na * Act_m_inf(V_m)**3 * Inact_h * (V_m - E_Na)
        inline I_K   "current" = g_K * Act_n**4 * (V_m - E_K)
        inline I_L   "current" = g_L * (V_m - E_L)

        Inact_h' = (alpha_h(V_m) * (1 - Inact_h) - beta_h(V_m) * Inact_h) / 1 ms # h-variable
        Act_n' = (alpha_n(V_m) * (1 - Act_n) - beta_n(V_m) * Act_n) / 1 ms # n-variable
        V_m' = (-(I_Na + I_K + I_L) + I_e + I_stim + I_syn) / C_m
        refr_t' = -1    # refractoriness is implemented as an ODE, representing a timer counting back down to zero, at a rate of one (milli)second per (milli)second


        #############
        # Synapses
        #############

        kernel g_AMPA' = g_AMPA$ - g_AMPA / AMPA_Tau_2,
               g_AMPA$' = -g_AMPA$ / AMPA_Tau_1

        kernel g_NMDA' = g_NMDA$ - g_NMDA / NMDA_Tau_2,
               g_NMDA$' = -g_NMDA$ / NMDA_Tau_1

        kernel g_GABAA' = g_GABAA$ - g_GABAA / GABA_A_Tau_2,
               g_GABAA$' = -g_GABAA$ / GABA_A_Tau_1

        kernel g_GABAB' = g_GABAB$ - g_GABAB / GABA_B_Tau_2,
               g_GABAB$' = -g_GABAB$ / GABA_B_Tau_1

    parameters:
        g_Na "conductance" = 3500.0 nS    # Sodium peak conductance
        g_K "conductance" = 900.0 nS      # Potassium peak conductance
        g_L "conductance" = 10 nS         # Leak conductance
        C_m "capacitance" = 100.0 pF      # Membrane capacitance
        E_Na "voltage" = 55.0 mV      # Sodium reversal potential
        E_K "voltage" = -90.0 mV      # Potassium reversal potential
        E_L "voltage" = -65.0 mV      # Leak reversal potential (a.k.a. resting potential)
        V_Tr "voltage" = -55.0 mV     # Spike threshold
        refr_T "time" = 2 ms       # Duration of refractory period

        # Parameters for synapse of type AMPA, GABA_A, GABA_B and NMDA

        AMPA_g_peak "conductance" = 0.1 nS      # peak conductance
        AMPA_E_rev "voltage" = 0.0 mV       # reversal potential
        AMPA_Tau_1 "time" = 0.5 ms       # rise time
        AMPA_Tau_2 "time" = 2.4 ms       # decay time, Tau_1 < Tau_2

        NMDA_g_peak "conductance" = 0.075 nS    # peak conductance
        NMDA_Tau_1 "time" = 4.0 ms       # rise time
        NMDA_Tau_2 "time" = 40.0 ms      # decay time, Tau_1 < Tau_2
        NMDA_E_rev "voltage" = 0.0 mV       # reversal potential
        NMDA_Vact "voltage" = -58.0 mV      # inactive for V << Vact, inflection of sigmoid
        NMDA_Sact "voltage" = 2.5 mV        # scale of inactivation

        GABA_A_g_peak "conductance" = 0.33 nS   # peak conductance
        GABA_A_Tau_1 "time" = 1.0 ms     # rise time
        GABA_A_Tau_2 "time" = 7.0 ms     # decay time, Tau_1 < Tau_2
        GABA_A_E_rev "voltage" = -70.0 mV   # reversal potential

        GABA_B_g_peak "conductance" = 0.0132 nS # peak conductance
        GABA_B_Tau_1 "time" = 60.0 ms    # rise time
        GABA_B_Tau_2 "time" = 200.0 ms   # decay time, Tau_1 < Tau_2
        GABA_B_E_rev "voltage" = -90.0 mV   # reversal potential for intrinsic current

        # constant external input current
        I_e "current" = 0 pA

    internals:
        AMPAInitialValue real = compute_synapse_constant(AMPA_Tau_1, AMPA_Tau_2, AMPA_g_peak)
        NMDAInitialValue real = compute_synapse_constant(NMDA_Tau_1, NMDA_Tau_2, NMDA_g_peak)
        GABA_AInitialValue real = compute_synapse_constant(GABA_A_Tau_1, GABA_A_Tau_2, GABA_A_g_peak)
        GABA_BInitialValue real = compute_synapse_constant(GABA_B_Tau_1, GABA_B_Tau_2, GABA_B_g_peak)

        alpha_n_init real = -0.05 * (V_m / 1 mV + 34.0) / (exp(-0.1 * (V_m / 1 mV + 34.0)) - 1.0)
        beta_n_init real = 0.625 * exp(-(V_m / 1 mV + 44.0) / 80.0)
        alpha_m_init real = 0.1 * (V_m / 1 mV + 35.0) / (1.0 - exp(-0.1 * (V_m / 1 mV + 35.)))
        beta_m_init  real = 4.0 * exp(-(V_m / 1 mV + 60.0) / 18.0)
        alpha_h_init real = 0.35 * exp(-(V_m / 1 mV + 58.0) / 20.0)
        beta_h_init  real = 5.0 / (exp(-0.1 * (V_m / 1 mV + 28.0)) + 1.0)

        unit_psg "conductance" = 1 nS    # Unitary postsynaptic conductance amplitude

    input:
        AMPA <- spike
        NMDA <- spike
        GABA_A <- spike
        GABA_B <- spike
        I_stim pA <- continuous

    output:
        spike

    update:
        V_m_old = V_m
        integrate_odes()    # in this model, V_m is always integrated, regardless of refractory state

    onCondition(refr_t <= 0 ms and V_m > V_Tr and V_m_old > V_m):        # if neuron is not refractory, threshold crossing and maximum
        refr_t = refr_T    # start of the refractory period
        emit_spike()

    function compute_synapse_constant(Tau_1 "time", Tau_2 "time", g_peak "conductance") real:
        # Factor used to account for the missing 1/((1/Tau_2)-(1/Tau_1)) term
        # in the ht_neuron_dynamics integration of the synapse terms.
        # See: Exact digital simulation of time-invariant linear systems
        # with applications to neuronal modeling, Rotter and Diesmann,
        # section 3.1.2.
        exact_integration_adjustment real = ((1 / Tau_2) - (1 / Tau_1)) * 1 ms

        t_peak "time" = (Tau_2 * Tau_1) * ln(Tau_2 / Tau_1) / (Tau_2 - Tau_1)
        normalisation_factor real = 1 / (exp(-t_peak / Tau_1) - exp(-t_peak / Tau_2))

        return (g_peak / 1 nS) * normalisation_factor * exact_integration_adjustment

    function Act_m_inf(V_m "voltage") real:
        return alpha_m(V_m) / (alpha_m(V_m) + beta_m(V_m))

    function alpha_m(V_m "voltage") real:
        return 0.1 * (V_m / 1 mV + 35.0) / (1.0 - exp(-0.1 * (V_m / 1 mV + 35.)))

    function beta_m(V_m "voltage") real:
        return 4.0 * exp(-(V_m / 1 mV + 60.0) / 18.0)

    function alpha_n(V_m "voltage") real:
        return -0.05 * (V_m / 1 mV + 34.0) / (exp(-0.1 * (V_m / 1 mV + 34.0)) - 1.0)

    function beta_n(V_m "voltage") real:
        return 0.625 * exp(-(V_m / 1 mV + 44.0) / 80.0)

    function alpha_h(V_m "voltage") real:
        return 0.35 * exp(-(V_m / 1 mV + 58.0) / 20.0)

    function beta_h(V_m "voltage") real:
        return 5.0 / (exp(-0.1 * (V_m / 1 mV + 28.0)) + 1.0)
