"""
XXX: NAIVE VERSION: unclear about relative timing of pre and post trace updates due to incoming pre and post spikes
"""
synapse stdp_triplet:

  state:
    w nS = 1 nS
  end

  parameters:
    the_delay ms = 1 ms  @nest::delay   # !!! cannot have a variable called "delay"

    tau_plus ms = 16.8 ms  # time constant for tr_r1
    tau_x ms = 101 ms  # time constant for tr_r2
    tau_minus ms = 33.7 ms  # time constant for tr_o1
    tau_y ms = 125 ms  # time constant for tr_o2
    
    A2_plus real = 7.5e-10
    A3_plus real = 9.3e-3
    A2_minus real = 7e-3
    A3_minus real = 2.3e-4
    
    Wmax nS = 100 nS
    Wmin nS = 0 nS
  end

  equations:
    kernel tr_r1_kernel = exp(-t / tau_plus)
    inline tr_r1 real = convolve(tr_r1_kernel, pre_spikes)

    kernel tr_r2_kernel = exp(-t / tau_x)
    inline tr_r2 real = convolve(tr_r2_kernel, pre_spikes)

    kernel tr_o1_kernel = exp(-t / tau_minus)
    inline tr_o1 real = convolve(tr_o1_kernel, post_spikes)

    kernel tr_o2_kernel = exp(-t / tau_y)
    inline tr_o2 real = convolve(tr_o2_kernel, post_spikes)
  end

  input:
    pre_spikes nS <- spike
    post_spikes nS <- post spike
  end

  output: spike

  postReceive:
    # potentiate synapse
    #w_ nS = Wmax * ( w / Wmax + tr_r1 * ( A2_plus + A3_plus * tr_o2 ) )
    w_ nS = w + tr_r1 * ( A2_plus + A3_plus * tr_o2 )
    w = min(Wmax, w_)
  end

  preReceive:
    # depress synapse
    #w_ nS = Wmax * ( w / Wmax  -  tr_o1 * ( A2_minus + A3_minus * tr_r2 ) )
    w_ nS = w  -  tr_o1 * ( A2_minus + A3_minus * tr_r2 )
    w = max(Wmin, w_)

    # deliver spike to postsynaptic partner
    deliver_spike(w, the_delay)
  end
  
end
