"""
Name: third_factor_stdp - Synapse type for spike-timing dependent plasticity.

Description:

stdp_synapse is a synapses with spike time dependent plasticity (as defined in [1]). Here the weight dependence exponent can be set separately for potentiation and depression.

Examples:

Multiplicative STDP [2]  mu_plus = mu_minus = 1
Additive STDP       [3]  mu_plus = mu_minus = 0
Guetig STDP         [1]  mu_plus, mu_minus in [0, 1]
Van Rossum STDP     [4]  mu_plus = 0 mu_minus = 1

Parameters:

lambda     real - Step size
alpha      real - Asymmetry parameter (scales depressing increments as alpha*lambda)
mu_plus    real - Weight dependence exponent, potentiation
mu_minus   real - Weight dependence exponent, depression
Wmax       nS   - Maximum allowed weight

References:

[1] Guetig et al. (2003) Learning Input Correlations through Nonlinear
    Temporally Asymmetric Hebbian Plasticity. Journal of Neuroscience

[2] Rubin, J., Lee, D. and Sompolinsky, H. (2001). Equilibrium
    properties of temporally asymmetric Hebbian plasticity, PRL
    86,364-367

[3] Song, S., Miller, K. D. and Abbott, L. F. (2000). Competitive
    Hebbian learning through spike-timing-dependent synaptic
    plasticity,Nature Neuroscience 3:9,919--926

[4] van Rossum, M. C. W., Bi, G-Q and Turrigiano, G. G. (2000).
    Stable Hebbian learning from spike timing-dependent
    plasticity, Journal of Neuroscience, 20:23,8812--8821

FirstVersion: March 2006

Author: Moritz Helias, Abigail Morrison

Adapted by: Philipp Weidel
"""
synapse third_factor_stdp:

  state:
    w nS = 1 nS
  end

  parameters:
    the_delay ms = 1 ms  @nest::delay   # !!! cannot have a variable called "delay"
    lambda real = .01
    tau_tr_pre ms = 20 ms
    tau_tr_post ms = 20 ms
    alpha real = 1.
    mu_plus real = 1.
    mu_minus real = 1.
    Wmax nS = 100 nS
    Wmin nS = 0 nS
  end

  equations:
    kernel pre_trace_kernel = exp(-t / tau_tr_pre)
    inline pre_trace real = convolve(pre_trace_kernel, pre_spikes)

    # all-to-all trace of postsynaptic neuron
    kernel post_trace_kernel = exp(-t / tau_tr_post)
    inline post_trace real = convolve(post_trace_kernel, post_spikes)
  end

  input:
    pre_spikes nS <- spike
    post_spikes nS <- spike
    I_post_dend pA <- continuous
  end

  output: spike

  postReceive:
    # potentiate synapse
    w_ nS = w   # Wmax * ( w / Wmax  + (lambda * ( 1. - ( w / Wmax ) )**mu_plus * pre_trace ))
    w_ += I_post_dend / pA * nS
    w = min(Wmax, w_)
  end

  preReceive:
    # depress synapse
    w_ nS = Wmax * ( w / Wmax  - ( alpha * lambda * ( w / Wmax )**mu_minus * post_trace ))
    w = max(Wmin, w_)

    # deliver spike to postsynaptic partner
    deliver_spike(w, the_delay)
  end

end

