"""
Name: wb_cond_multisyn - Wang buzsaki model with 

Description:

wb_cond_multisyn is an implementation of a modified Hodkin-Huxley model

Spike Detection
 Spike detection is done by a combined threshold-and-local-maximum search: if
 there is a local maximum above a certain threshold of the membrane potential,
 it is considered a spike.

- AMPA, NMDA, GABA_A, and GABA_B conductance-based synapses with
 beta-function (difference of two exponentials) time course.

References:

Wang, X.J. and Buzsaki, G., (1996) Gamma oscillation by synaptic inhibition in a hippocampal interneuronal network model. Journal of neuroscience, 16(20), pp.6402-6413.

SeeAlso: hill_tononi
"""

neuron wb_cond_multisyn:
  state:
    r integer # number of steps in the current refractory phase
  end

  initial_values:
    V_m mV = -65. mV # Membrane potential

    # function alpha_n_init real = 0.032 * (V_m / mV + 52.) / (1. - exp(-(V_m / mV + 52.) / 5.))     
    function alpha_n_init real = -0.05 * (V_m / mV + 34.0) / (exp(-0.1 * (V_m / mV + 34.0)) - 1.0)
    function beta_n_init  real = 0.625 * exp(-(V_m / mV + 44.0) / 80.0)
    function alpha_m_init real = 0.1 * (V_m / mV + 35.0) / (1.0 - exp(-0.1 mV * (V_m / mV + 35.0 mV)))
    function beta_m_init  real = 4.0 * exp(-(V_m / mV + 60.0) / 18.0)
    function alpha_h_init real = 0.35 * exp(-(V_m / mV + 58.0) / 20.0)
    function beta_h_init  real = 5.0 / (exp(-0.1 * (V_m / mV + 28.0)) + 1.0)

    # Act_m real =  alpha_m_init / ( alpha_m_init + beta_m_init )   # Activation variable m for Na
    Inact_h real = alpha_h_init / ( alpha_h_init + beta_h_init )    # Inactivation variable h for Na
    Act_n real = alpha_n_init / (alpha_n_init + beta_n_init)  # Activation variable n for K

    g_AMPA nS = 0.0 nS
    g_AMPA' nS/ms = 0.0 nS/ms

    g_NMDA nS = 0.0 nS 
    g_NMDA' nS/ms = 0.0 nS/ms 

    g_GABAA nS = 0.0 nS
    g_GABAA' nS/ms = 0.0 nS/ms
    
    g_GABAB nS = 0.0 nS 
    g_GABAB' nS/ms = 0.0 nS/ms

  end

  equations:
    
    recordable function I_syn_ampa pA = -g_AMPA * ( V_m - AMPA_E_rev )
    recordable function I_syn_nmda pA = -g_NMDA * ( V_m - NMDA_E_rev ) / ( 1 + exp( ( NMDA_Vact - V_m ) / NMDA_Sact ) )
    recordable function I_syn_gaba_a pA = -g_GABAA * ( V_m - GABA_A_E_rev )
    recordable function I_syn_gaba_b pA = -g_GABAB * ( V_m - GABA_B_E_rev )
    recordable function I_syn pA = I_syn_ampa + I_syn_nmda + I_syn_gaba_a + I_syn_gaba_b  
    
    function alpha_n real = -0.05 * (V_m / mV + 34.0) / (exp(-0.1 * (V_m / mV + 34.0)) - 1.0)
    function beta_n  real = 0.625 * exp(-(V_m / mV + 44.0) / 80.0)
    function alpha_m real = 0.1 * (V_m / mV + 35.0) / (1.0 - exp(-0.1 mV * (V_m / mV + 35.0 mV)))
    function beta_m  real = 4.0 * exp(-(V_m / mV + 60.0) / 18.0)
    function alpha_h real = 0.35 * exp(-(V_m / mV + 58.0) / 20.0)
    function beta_h  real = 5.0 / (exp(-0.1 * (V_m / mV + 28.0)) + 1.0)

    function Act_m_inf real = alpha_m / ( alpha_m + beta_m ) 
    function I_Na  pA = g_Na * Act_m_inf * Act_m_inf * Act_m_inf * Inact_h * ( V_m - E_Na )
    function I_K   pA  = g_K * Act_n * Act_n * Act_n * Act_n * ( V_m - E_K )
    function I_L   pA = g_L * ( V_m - E_L )

    
    Inact_h' = ( alpha_h * ( 1 - Inact_h ) - beta_h * Inact_h ) / ms # h-variable
    Act_n' = ( alpha_n * ( 1 - Act_n ) - beta_n * Act_n ) / ms # n-variable
    V_m' =( -( I_Na + I_K + I_L ) + I_e + I_stim + I_syn ) / C_m

    # Act_m' = ( alpha_m * ( 1 - Act_m ) - beta_m * Act_m ) / ms # m-variable

    
    #############
    # Synapses
    #############
    
    g_AMPA'' = -g_AMPA' / AMPA_Tau_1
    g_AMPA' = g_AMPA' - g_AMPA  / AMPA_Tau_2

    g_NMDA'' = -g_NMDA' / NMDA_Tau_1
    g_NMDA' = g_NMDA' - g_NMDA / NMDA_Tau_2

    g_GABAA'' = -g_GABAA' / GABA_A_Tau_1
    g_GABAA' = g_GABAA' - g_GABAA / GABA_A_Tau_2

    g_GABAB'' = -g_GABAB' / GABA_B_Tau_1
    g_GABAB' = g_GABAB' - g_GABAB /GABA_B_Tau_2

  end

  parameters:
    t_ref ms = 2.0 ms      # Refractory period 2.0
    g_Na nS = 3500.0 nS    # Sodium peak conductance
    g_K nS = 900.0 nS      # Potassium peak conductance
    g_L nS = 10 nS          # Leak conductance
    C_m pF = 100.0 pF       # Membrane Capacitance
    E_Na mV = 55.0 mV         # Sodium reversal potential
    E_K mV = -90.0 mV        # Potassium reversal potentia
    E_L mV = -65.0 mV     # Leak reversal Potential (aka resting potential)
    V_Tr mV = -55.0 mV        # Spike Threshold
    
    # Parameters for synapse of type AMPA, GABA_A, GABA_B and NMDA
    AMPA_g_peak nS = 0.1 nS      # peak conductance
    AMPA_E_rev mV = 0.0 mV       # reversal potential
    AMPA_Tau_1 ms = 0.5 ms       # rise time
    AMPA_Tau_2 ms = 2.4 ms       # decay time, Tau_1 < Tau_2
    
    NMDA_g_peak nS = 0.075 nS    # peak conductance
    NMDA_Tau_1 ms = 4.0 ms       # rise time
    NMDA_Tau_2 ms = 40.0 ms      # decay time, Tau_1 < Tau_2
    NMDA_E_rev mV = 0.0 mV       # reversal potential
    NMDA_Vact mV = -58.0 mV      # inactive for V << Vact, inflection of sigmoid
    NMDA_Sact mV = 2.5 mV        # scale of inactivation
    
    GABA_A_g_peak nS = 0.33 nS   # peak conductance
    GABA_A_Tau_1 ms = 1.0 ms     # rise time
    GABA_A_Tau_2 ms = 7.0 ms     # decay time, Tau_1 < Tau_2
    GABA_A_E_rev mV = -70.0 mV   # reversal potential
    
    GABA_B_g_peak nS = 0.0132 nS # peak conductance
    GABA_B_Tau_1 ms = 60.0 ms    # rise time
    GABA_B_Tau_2 ms = 200.0 ms   # decay time, Tau_1 < Tau_2
    GABA_B_E_rev mV = -90.0 mV   # reversal potential for intrinsic current

    # constant external input current
    I_e pA = 0 pA
  
  end

  internals:
    
    AMPAInitialValue real = compute_synapse_constant( AMPA_Tau_1, AMPA_Tau_2, AMPA_g_peak )
    NMDAInitialValue real = compute_synapse_constant( NMDA_Tau_1, NMDA_Tau_2, NMDA_g_peak )
    GABA_AInitialValue real = compute_synapse_constant( GABA_A_Tau_1, GABA_A_Tau_2, GABA_A_g_peak )
    GABA_BInitialValue real = compute_synapse_constant( GABA_B_Tau_1, GABA_B_Tau_2, GABA_B_g_peak )
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  
  end

  input:
    AMPA nS  <- spike
    NMDA nS  <- spike
    GABA_A nS <- spike
    GABA_B nS <- spike
    I_stim pA <- current
  end

  output: spike

  update:
    U_old mV = V_m
    integrate_odes()
    
    g_AMPA' += AMPAInitialValue * AMPA /ms
    g_NMDA' += NMDAInitialValue * NMDA /ms
    g_GABAA' += GABA_AInitialValue * GABA_A /ms
    g_GABAB' += GABA_BInitialValue * GABA_B /ms
    
    # sending spikes: 
    if r > 0: # is refractory?
      r -= 1
    elif V_m > V_Tr and U_old > V_m: # threshold && maximum
      r = RefractoryCounts
      emit_spike()
    end

  end


  function compute_synapse_constant(Tau_1 ms, Tau_2 ms, g_peak real) real:
    # Factor used to account for the missing 1/((1/Tau_2)-(1/Tau_1)) term
    # in the ht_neuron_dynamics integration of the synapse terms.
    # See: Exact digital simulation of time-invariant linear systems
    # with applications to neuronal modeling, Rotter and Diesmann,
    # section 3.1.2.
    exact_integration_adjustment real = ( ( 1 / Tau_2 ) - ( 1 / Tau_1 ) ) * ms

    t_peak real = ( Tau_2 * Tau_1 ) * ln( Tau_2 / Tau_1 ) / ( Tau_2 - Tau_1 ) / ms
    normalisation_factor real = 1 / ( exp( -t_peak / Tau_1 ) - exp( -t_peak / Tau_2 ) )

    return g_peak * normalisation_factor * exact_integration_adjustment
  end

end


