/*
Name: aeif_cond_exp_implicit -  Conductance based exponential integrate-and-fire neuron
                         model according to Brette and Gerstner (2005).

Description:
aeif_cond_exp_implicit is the adaptive exponential integrate and fire neuron according
to Brette and Gerstner (2005).
Synaptic conductances are modelled as alpha-functions.

This implementation uses the embedded 4th order Runge-Kutta-Fehlberg solver with
adaptive step size to integrate the differential equation.

The membrane potential is given by the following differential equation:
C dV/dt= -g_L(V-E_L)+g_L*Delta_T*exp((V-V_T)/Delta_T)-g_e(t)(V-E_e)
                                                     -g_i(t)(V-E_i)-w +I_e

and

tau_w * dw/dt= a(V-E_L) -W

Parameters:
The following parameters can be set in the status dictionary.

Dynamic state variables:
  V_m        double - Membrane potential in mV
  g_ex       double - Excitatory synaptic conductance in nS.
  dg_ex      double - First derivative of g_ex in nS/ms
  g_in       double - Inhibitory synaptic conductance in nS.
  dg_in      double - First derivative of g_in in nS/ms.
  w          double - Spike-adaptation current in pA.

Membrane Parameters:
  C_m        double - Capacity of the membrane in pF
  t_ref      double - Duration of refractory period in ms.
  V_reset    double - Reset value for V_m after a spike. In mV.
  E_L        double - Leak reversal potential in mV.
  g_L        double - Leak conductance in nS.
  I_e        double - Constant external input current in pA.

Spike adaptation parameters:
  a          double - Subthreshold adaptation in nS.
  b          double - Spike-triggered adaptation in pA.
  Delta_T    double - Slope factor in mV
  tau_w      double - Adaptation time constant in ms
  V_th       double - Spike initiation threshold in mV
  V_peak     double - Spike detection threshold in mV.

Synaptic parameters
  E_ex       double - Excitatory reversal potential in mV.
  tau_syn_ex double - Rise time of excitatory synaptic conductance in ms (alpha
                      function).
  E_in       double - Inhibitory reversal potential in mV.
  tau_syn_in double - Rise time of the inhibitory synaptic conductance in ms
                      (alpha function).

Integration parameters
  gsl_error_tol  double - This parameter controls the admissible error of the
                          GSL integrator. Reduce it if NEST complains about
                          numerical instabilities.

Author: Marc-Oliver Gewaltig

Sends: SpikeEvent

Receives: SpikeEvent, CurrentEvent, DataLoggingRequest

References: Brette R and Gerstner W (2005) Adaptive Exponential
            Integrate-and-Fire Model as an Effective Description of Neuronal
            Activity. J Neurophysiol 94:3637-3642

SeeAlso: iaf_cond_alpha, aeif_cond_exp
*/
neuron aeif_cond_exp_neuron:

  state:
    V_m mV = E_L
    w real = 0

  end

  equations:
    # Explicit
    shape GI = exp(-1/tau_syn_in*t)
    shape GE = exp(-1/tau_syn_ex*t)
    function exp_arg real = (V_m-V_th)/delta_T
    function I_spike real = delta_T*exp(exp_arg)
    function I_syn_exc real =   cond_sum(GE, spikeExc) * ( V_m - E_ex )
    function I_syn_inh real =   cond_sum(GI, spikeInh) * ( V_m - E_in )

    V_m' = ( -g_L * ( ( V_m - E_L ) - I_spike ) - I_syn_exc - I_syn_inh - w + I_e + I_stim ) / C_m
    w' = (a*(V_m - E_L) - w)/tau_w
  end

  parameters:
    # membrane parameters
    C_m   pF = 281.0pF     # Membrane Capacitance in pF
    t_ref ms = 0.0ms       # Refractory period in ms
    V_reset mV = -60.0mV   # Reset Potential in mV
    g_L nS = 30.0nS        # Leak Conductance in nS
    E_L mV = -70.6mV       # Leak reversal Potential (aka resting potential) in mV
    I_e pA = 0pA           # Constant Current in pA

    # spike adaptation parameters
    a nS = 4nS             # Subthreshold adaptation.
    b pA = 80.5pA          # Spike-triggered adaptation.
    delta_T mV = 2.0mV     # Slope factor
    tau_w ms = 144.0ms     # Adaptation time constant in
    V_th mV = -50.4mV      # Threshold Potential
    V_peak mV = 0mV        # Spike detection threshold in mV.

    # synaptic parameters
    E_ex mV = 0mV            # Excitatory reversal Potential in mV
    tau_syn_ex ms = 0.2ms    # Synaptic Time Constant Excitatory Synapse in ms
    E_in mV = -85.0mV        # Inhibitory reversal Potential in mV
    tau_syn_in ms = 2.0ms    # Synaptic Time Constant for Inhibitory Synapse in ms

    # Input current injected by CurrentEvent.
    # This variable is used to transport the current applied into the
    # _dynamics function computing the derivative of the state vector.
    I_stim pA = 0pA
  end

  internals:
    # refractory time in steps
    RefractoryCounts integer = steps(t_ref)
    # counts number of tick during the refractory period
    r integer
  end

  input:
    spikeInh   <- inhibitory spike
    spikeExc   <- excitatory spike
    currents <- current
  end

  output: spike

  update:
    integrate_odes()

    if r > 0: # refractory
      r = r - 1
    end

    if r > 0: # not refractory
      V_m = V_reset # clamp potential
    elif V_m >= V_peak:
      r = RefractoryCounts
      V_m = V_reset # clamp potential
      w += b
      emit_spike()
    end

    I_stim = currents.get_sum()
  end

end
