/*
  A straight forward implementation of the RC circuit approach.
  Extends firing model with an additional refractory state. It is entered directly after a spike is fired.
*/
neuron rc_refractory:

  state:
    V_abs mV = 0mV
    alias V_m mV = V_abs + E_L
  end

  equations:
    V_abs' = -1/tau_m * V_abs + 1/C_m*I_syn
  end

  parameter:
    E_L   mV = -70mV
    C_m   pF = 250pF
    tau_m ms = 10ms
    I_syn pA = 10pA
    alias V_th mV = -55mV - E_L
    alias V_reset mV = -65mV - E_L
    refractory_timeout ms = 5ms
    refractory_counts integer = 0
  end

  input:
    spikes   <- spike
  end

  output: spike

  update:
    if refractory_counts == 0:
      integrate(V_abs)
      if V_abs > V_th:
        V_abs = V_reset
        emit_spike()
        refractory_counts = steps(refractory_timeout)
      end
    else:
      refractory_counts -= 1
    end
  end


end