# iaf_psc_exp_dend - Leaky integrate-and-fire neuron model with exponential PSCs
# #########################################################################
#
# Description
# +++++++++++
#
# iaf_psc_exp is an implementation of a leaky integrate-and-fire model
# with exponential-kernel postsynaptic currents (PSCs) according to [1]_.
# Thus, postsynaptic currents have an infinitely short rise time.
#
# The threshold crossing is followed by an absolute refractory period (t_ref)
# during which the membrane potential is clamped to the resting potential
# and spiking is prohibited.
#
# .. note::
#    If tau_m is very close to tau_syn_ex or tau_syn_in, numerical problems
#    may arise due to singularities in the propagator matrics. If this is
#    the case, replace equal-valued parameters by a single parameter.
#
#    For details, please see ``IAF_neurons_singularity.ipynb`` in
#    the NEST source code (``docs/model_details``).
#
#
# References
# ++++++++++
#
# .. [1] Tsodyks M, Uziel A, Markram H (2000). Synchrony generation in recurrent
#        networks with frequency-dependent synapses. The Journal of Neuroscience,
#        20,RC50:1-5. URL: https://infoscience.epfl.ch/record/183402
#
#
# See also
# ++++++++
#
# iaf_cond_exp
#
#
model iaf_psc_exp_cm_dend:

    state:
        v_comp real = 0           # Membrane potential
        refr_t ms = 0 ms          # Refractory period timer

        is_refr real = 0.0
    

    equations:
        kernel I_kernel_inh = exp(-t/tau_syn_inh)
        kernel I_kernel_exc = exp(-t/tau_syn_exc)

        inline leak real = (E_l - v_comp) * C_m / tau_m @mechanism::channel
        inline syn_exc real = convolve(I_kernel_exc, exc_spikes)  @mechanism::receptor
        inline syn_inh real = convolve(I_kernel_inh, inh_spikes)  @mechanism::receptor
        inline refr real = G_refr * is_refr * (V_reset - v_comp)  @mechanism::channel

    parameters:
        C_m pF = 250 pF           # Capacity of the membrane
        tau_m ms = 10 ms          # Membrane time constant
        tau_syn_inh ms = 2 ms     # Time constant of inhibitory synaptic current
        tau_syn_exc ms = 2 ms     # Time constant of excitatory synaptic current
        refr_T ms = 5 ms          # Duration of refractory period
        E_l mV = -70 mV           # Resting potential
        V_reset mV = -70 mV       # Reset potential of the membrane
        V_th mV = -55 mV          # Spike threshold potential

        # constant external input current
        I_e pA = 0 pA

        G_refr real = 0.

    input:
        exc_spikes <- excitatory spike
        inh_spikes <- inhibitory spike
        I_stim pA <- continuous

    output:
        spike

    update:
        if refr_t > resolution() / 2:
            # neuron is absolute refractory, do not evolve V_m
            refr_t -= resolution()
        else:
            refr_t = 0 ms
            is_refr = 0

    onReceive(self_spikes):
        is_refr = 1
        refr_t = refr_T
