# cm_third_factor_stdp_synapse
# ############################
#
# Description
# +++++++++++
#
# Compartmental implementation of the Synapse model for spike-timing dependent plasticity with postsynaptic third-factor modulation.
# For further information see third_factor_stdp_synapse.nestml
#
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model third_factor_stdp_synapse:
    state:
        w real = 1.   # Synaptic weight
        I_post_dend "current" = 0 pA
        AMPA "current" = 0 pA
        Ca_HVA "current" = 0 pA
        Ca_LVAst "current" = 0 pA
        NaTa_t "current" = 0 pA
        SK_E2 "current" = 0 pA

    parameters:
        d "time" = 1 ms    # Synaptic transmission delay
        lambda real = .01
        tau_tr_pre "time" = 20 ms
        tau_tr_post "time" = 20 ms
        alpha real = 1.
        mu_plus real = 1.
        mu_minus real = 1.
        Wmax real = 100.
        Wmin real = 0.
        third_factor_scale real = 1.

    equations:
        kernel pre_trace_kernel = exp(-t / tau_tr_pre)
        inline pre_trace real = convolve(pre_trace_kernel, pre_spikes)

        # all-to-all trace of postsynaptic neuron
        kernel post_trace_kernel = exp(-t / tau_tr_post)
        inline post_trace real = convolve(post_trace_kernel, post_spikes)

    input:
        pre_spikes <- spike
        post_spikes <- spike

    output:
        spike

    onReceive(post_spikes):
        # potentiate synapse
        w_ real = Wmax * ( w / Wmax  + (lambda * ( 1. - ( w / Wmax ) )**mu_plus * pre_trace ))
        if I_post_dend <= 1 pA:
            w_ = (I_post_dend / 1 pA) * w_ + (1 - I_post_dend / 1 pA) * w   # "gating" of the weight update
        w = min(Wmax, w_)

    onReceive(pre_spikes):
        # depress synapse
        w_ real = Wmax * ( w / Wmax  - ( alpha * lambda * ( w / Wmax )**mu_minus * post_trace ))
        if I_post_dend <= 1 pA:
            w_ = (I_post_dend / 1 pA) * w_ + (1 - I_post_dend / 1 pA) * w   # "gating" of the weight update
        w = max(Wmin, w_)

        # deliver spike to postsynaptic partner
        emit_spike(w)

    update:
        I_post_dend = third_factor_scale * (AMPA + Ca_HVA + Ca_LVAst + NaTa_t + SK_E2)
