# continuous_test.nestml
#
# Description
# +++++++++++
# Basic compartmental test model for testing the continuous input mechanisms.
#
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
#
model continuous_test_model:
    state:
        v_comp real = 0

    parameters:
        e_AMPA real = 0 mV
        tau_r_AMPA real = 0.2 ms
        tau_d_AMPA real = 3.0 ms

    equations:
        inline con_in real = (I_stim*10) @mechanism::continuous_input

        kernel g_AMPA = g_norm_AMPA * ( - exp(-t / tau_r_AMPA) + exp(-t / tau_d_AMPA) )
        inline AMPA real = convolve(g_AMPA, spikes_AMPA) * (e_AMPA - v_comp) @mechanism::receptor

    internals:
        tp_AMPA real = (tau_r_AMPA * tau_d_AMPA) / (tau_d_AMPA - tau_r_AMPA) * ln( tau_d_AMPA / tau_r_AMPA )
        g_norm_AMPA real =  1. / ( -exp( -tp_AMPA / tau_r_AMPA ) + exp( -tp_AMPA / tau_d_AMPA ) )

    input:
        I_stim real <- continuous
        spikes_AMPA <- spike
