"""
RecordableVariables.nestml
##########################

Description
+++++++++++

This model is used to test recording of variables and inline expressions.


Copyright statement
+++++++++++++++++++

This file is part of NEST.

Copyright (C) 2004 The NEST Initiative

NEST is free software: you can redistribute it and/or modify
it under the terms of the GNU General Public License as published by
the Free Software Foundation, either version 2 of the License, or
(at your option) any later version.

NEST is distributed in the hope that it will be useful,
but WITHOUT ANY WARRANTY; without even the implied warranty of
MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
GNU General Public License for more details.

You should have received a copy of the GNU General Public License
along with NEST.  If not, see <http://www.gnu.org/licenses/>.
"""
model recordable_variables:
    state:
        V_ex mV = -5 mV
        V_rel mV = 0 mV  # Membrane potential relative to the reset potential
        I_syn pA = 0 pA

    equations:
        recordable inline V_m mV = V_rel + V_reset
        I_syn' = -I_syn / tau_syn
        V_rel' = -V_rel / tau_m + (I_syn + I_e + I_stim) / C_m

    parameters:
        tau_m ms = 10 ms
        tau_syn ms = 2 ms
        I_e pA = 0 pA
        C_m pF = 250 pF
        V_reset mV = -70 mV
        V_thr mV = -55 mV

    input:
        spikes pA <- spike
        I_stim pA <- continuous

    onReceive(spikes):
        I_syn += spikes

    update:
        integrate_odes()
        V_ex = -10 mV

        if V_m >= V_thr:    # Threshold is crossed
            V_rel = 0 mV    # Reset the membrane potential
            emit_spike()

    output:
        spike
