"""
iaf_cond_exp_Istep - Simple conductance based leaky integrate-and-fire neuron model with step current
#####################################################################################################

Description
+++++++++++

iaf_cond_exp_Istep is a variation of iaf_cond_exp [1] that incorporates a stepwise-constant injected current,
defined according to a vector of times (``t_step``) and a vector of current amplitudes at those times (``I_step``).

References
++++++++++

.. [1] Meffin H, Burkitt AN, Grayden DB (2004). An analytical
       model for the large, fluctuating synaptic conductance state typical of
       neocortical neurons in vivo. Journal of Computational Neuroscience,
       16:159-175.
       DOI: https://doi.org/10.1023/B:JCNS.0000014108.03012.81

See also
++++++++

iaf_psc_delta, iaf_psc_exp, iaf_cond_exp
"""
model iaf_cond_exp_Istep:
    state:
        r integer = 0     # counts number of tick during the refractory period
        V_m mV = E_L     # membrane potential
        k_step integer = 0       # iterator for step current
        I_step_now pA = 0. pA  # momentaneous value of step current
        now ms = 0. ms  # current time
        g_ex nS = 0 nS
        g_in nS = 0 nS

    equations:
        g_ex' = -g_ex / tau_syn_ex
        g_in' = -g_in / tau_syn_in

        inline I_syn_ex pA = g_ex * ( V_m - E_ex )
        inline I_syn_in pA = g_in * ( V_m - E_in )
        inline I_leak pA = g_L * ( V_m - E_L )
        V_m' = ( -I_leak - I_syn_ex - I_syn_in + I_e + I_stim + I_step_now ) / C_m

    parameters:
        V_th mV = -55 mV        # Threshold potential
        V_reset mV = -60 mV     # Reset potential
        t_ref ms = 2 ms         # Refractory period
        g_L nS = 16.6667 nS     # Leak conductance
        C_m pF = 250 pF         # Membrane capacitance
        E_ex mV = 0 mV         # Excitatory reversal potential
        E_in mV = -85 mV       # Inhibitory reversal potential
        E_L mV = -70 mV         # Leak reversal potential (aka resting potential)
        tau_syn_ex ms = 0.2 ms # Synaptic time constant of excitatory synapse
        tau_syn_in ms = 2 ms   # Synaptic time constant of inhibitory synapse

        # constant external input current
        I_e pA = 0 pA

        n_step integer = 1  # length of step current
        I_step[n_step] pA = 0. pA  # injected current
        t_step[n_step] ms = 0. ms  # times of step current changes

    internals:
        RefractoryCounts integer = steps(t_ref) # refractory time in steps

    input:
        inh_spikes nS <- inhibitory spike
        exc_spikes nS <- excitatory spike
        I_stim pA <- continuous

    onReceive(exc_spikes):
        g_ex += exc_spikes

    onReceive(inh_spikes):
        g_ex += inh_spikes

    output:
        spike

    update:
        integrate_odes()
        if r != 0: # neuron is absolute refractory
            r =  r - 1
            V_m = V_reset # clamp potential
        elif V_m >= V_th:  # neuron is not absolute refractory
            r = RefractoryCounts
            V_m = V_reset # clamp potential
            emit_spike()
        if k_step <= n_step and now > t_step[k_step]:
            I_step_now = I_step[k_step]
            k_step += 1
        now += resolution()
