# double_postsyn_trace_synapse
# ############################
#
# A synapse model with two traces that are updated by postsynaptic spikes.
#
# Copyright statement
# +++++++++++++++++++
#
# This file is part of NEST.
#
# Copyright (C) 2004 The NEST Initiative
#
# NEST is free software: you can redistribute it and/or modify
# it under the terms of the GNU General Public License as published by
# the Free Software Foundation, either version 2 of the License, or
# (at your option) any later version.
#
# NEST is distributed in the hope that it will be useful,
# but WITHOUT ANY WARRANTY; without even the implied warranty of
# MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
# GNU General Public License for more details.
#
# You should have received a copy of the GNU General Public License
# along with NEST.  If not, see <http://www.gnu.org/licenses/>.
#
model double_postsyn_trace_synapse:
    state:
        w real = 1
        zm_trace real = 0.      # z_minus
        zp_trace real = 0.      # z_plus

    parameters:
        d ms = 1 ms

        tau_zm ms = 100 ms
        tau_zp ms = 50 ms
        Zm real = 0.1
        Zp real = 0.2

        update_order_w_before_trace boolean = false

    equations:
        zm_trace' = -zm_trace / tau_zm
        zp_trace' = -zp_trace / tau_zp

    input:
        pre_spikes <- spike
        post_spikes <- spike

    output:
        spike(weight real, delay ms)

    onReceive(post_spikes, priority=1):
        if update_order_w_before_trace:
            w += zp_trace * zm_trace

            zp_trace += Zp * (1 - zp_trace)
            zm_trace += Zm * (1 - zm_trace)
        else:
            zp_trace += Zp * (1 - zp_trace)
            zm_trace += Zm * (1 - zm_trace)

            w += zp_trace * zm_trace

    onReceive(pre_spikes, priority=2):
        emit_spike(w, d)

    update:
        integrate_odes()
