""" 
CoCoOutputPortDefinedIfEmitCall.nestml
######################################


Description
+++++++++++

This model is used to test if broken CoCos are identified correctly. Here, if the output is not defined. Based on the ``iaf_psc_exp`` model at Sep 2020.

Positive case.


Copyright statement
+++++++++++++++++++

This file is part of NEST.

Copyright (C) 2004 The NEST Initiative

NEST is free software: you can redistribute it and/or modify
it under the terms of the GNU General Public License as published by
the Free Software Foundation, either version 2 of the License, or
(at your option) any later version.

NEST is distributed in the hope that it will be useful,
but WITHOUT ANY WARRANTY; without even the implied warranty of
MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
GNU General Public License for more details.

You should have received a copy of the GNU General Public License
along with NEST.  If not, see <http://www.gnu.org/licenses/>.
"""
neuron iaf_psc_exp:

  state:
    r integer = 0 # counts number of ticks during the refractory period
    V_m mV = 0 mV
  end

  equations:
    kernel I_kernel_inh = exp(-t/tau_syn_inh)
    kernel I_kernel_exc = exp(-t/tau_syn_exc)
    inline I_syn pA = convolve(I_kernel_inh, inh_spikes) + convolve(I_kernel_exc, exc_spikes) + I_e + I_stim
    V_m' = -(V_m - E_L) / tau_m + I_syn / C_m
  end

  parameters:
    C_m pF = 250 pF           # Capacitance of the membrane
    tau_m ms = 10 ms          # Membrane time constant
    tau_syn_inh ms = 2 ms     # Time constant of synaptic current
    tau_syn_exc ms = 2 ms     # Time constant of synaptic current
    t_ref ms = 2 ms           # Duration of refractory period
    E_L  mV = -70 mV          # Resting potential
    V_reset mV = -70 mV       # Reset value of the membrane potential
    Theta mV = -55 mV         # Threshold potential

    # constant external input current
    I_e pA = 0 pA
  end

  internals:
    RefractoryCounts integer = steps(t_ref) # refractory time in steps
  end

  input:
    exc_spikes pA <- excitatory spike
    inh_spikes pA <- inhibitory spike
    I_stim pA <- continuous
  end

  update:
    if r == 0: # neuron not refractory, so evolve V
      integrate_odes()
    else:
      r = r - 1 # neuron is absolute refractory
    end

    if V_m >= Theta: # threshold crossing
      r = RefractoryCounts
      V_m = V_reset
      # emit_spike()
    end

  end

end
